CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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notes:['']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/almfscreen/corallin/output
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:4
    Text that these images have in common (case-sensitive):C01.ome.tif
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:(?P<ImageBaseName>.*)[-][-].*[.].*$
    Type the regular expression that finds metadata in the subfolder path:(?P<PathBase>.*)[\\\\/](?P<PathPlate>.*)[\\\\/](?P<PathWell>.*)[\\\\/](?P<PathPos>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:nucleusRaw
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):C02.ome.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<Layout>.*)_(?P<Replicate>.*)--(?P<siRNA>.*)--(?P<gene>.*)--W(?P<wellNum>.*)--P(?P<posNum>.*)--T(?P<timeNum>.*)--Z(?P<zNum>.*)--(?P<channel>.*).ome.tif
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:actinRaw
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):C03.ome.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<dum1>.*)--(?P<siRNAgene>.*--.*)--.*--.*--.*--.*--.*
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:cytoRaw
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):8bit.tiff
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:actin8bit
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    Rescale intensities?:Yes

ClassifyPixels:[module_num:2|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
    Select the input image:actin8bit
    Name of the output probability map:ruffleP
    Class to choose:1
    Input classifier file location:Elsewhere...|/g/almfscreen/corallin/Analysis
    Classfier File:ilastik_8bit_classifier_corralin_ruffles_2013-03-18_withdarkcells.h5

ApplyThreshold:[module_num:3|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
    Select the input image:ruffleP
    Name the output image:ruffleBW
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.51
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:ruffleBW
    Name the primary objects to be identified:ruffle
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Name the outline image:ruffleOutlines
    Fill holes in identified objects?:No
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
Morph:[module_num:5|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
    Select the input image:ruffleBW
    Name the output image:ruffleBWclose
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:7

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:ruffleBWclose
    Name the primary objects to be identified:ruffleBWcloseBig
    Typical diameter of objects, in pixel units (Min,Max):15,40000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Name the outline image:bigRufflesOutlines
    Fill holes in identified objects?:No
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:ruffleBWcloseBig
    Name the output image:ruffleBWcloseBig
    Select the color type:Binary (black & white)
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
RescaleIntensity:[module_num:8|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
    Select the input image:nucleusRaw
    Name the output image:nucleus
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0624761585
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    Select method for rescaling pixels below the lower limit:Set to zero
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    Select method for rescaling pixels above the upper limit:Set to one
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
RescaleIntensity:[module_num:9|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
    Select the input image:actinRaw
    Name the output image:actin
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0624761585
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:10|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
    Select the input image:cytoRaw
    Name the output image:cyto
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0624761585
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
Crop:[module_num:11|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
    Select the input image:cyto
    Name the output image:cytoCenter
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:150,-150
    Top and bottom rectangle positions:150,-150
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    Remove empty rows and columns?:All
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
MeasureImageIntensity:[module_num:12|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
    Select the image to measure:cytoCenter
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:cytoBGsubtracted
    Image or measurement?:Image
    Select the first image:cyto
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MinIntensity_cytoCenter

MeasureImageQuality:[module_num:14|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:nucleus
    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Window size for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:nucleus
    Name the primary objects to be identified:nucleusTmp
    Typical diameter of objects, in pixel units (Min,Max):20,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.06,1.0
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
Smooth:[module_num:16|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
    Select the input image:cytoBGsubtracted
    Name the output image:cytosmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:10
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
IdentifySecondaryObjects:[module_num:17|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notes:['']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
    Select the input objects:nucleusTmp
    Name the objects to be identified:cellTmp
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:cytosmooth
    Select the thresholding method:Manual
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    Manual threshold:0.04
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

ApplyThreshold:[module_num:18|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
    Select the input image:actin8bit
    Name the output image:actin8bitSatu
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.99
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
ExpandOrShrinkObjects:[module_num:19|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
    Select the input objects:cellTmp
    Name the output objects:cellShrunkTmp
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the outline image:cellShrunkOutlinesTmp

MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:cellShrunkTmp
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:21|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
    Hidden:2
    Select an image to measure:actin8bitSatu
    Select an image to measure:actin
    Select objects to measure:cellShrunkTmp

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:actin
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:cellShrunkOutlinesTmp
    Select outline color:Red

FilterObjects:[module_num:23|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
    Name the output objects:cellShrunk
    Select the object to filter:cellShrunkTmp
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:cellShrunkOutlines
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    Measurement count:3
    Additional object count:1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:Yes
    Maximum value:10000000000
    Select the measurement to filter by:Intensity_IntegratedIntensity_actin8bitSatu
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:500.0
    Select the measurement to filter by:Intensity_MeanIntensity_actin
    Filter using a minimum measurement value?:Yes
    Minimum value:0.095
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select additional object to relabel:nucleusTmp
    Name the relabeled objects:nucleus
    Retain outlines of relabeled objects?:No
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
ConvertObjectsToImage:[module_num:24|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
    Select the input objects:ruffleBWcloseBig
    Name the output image:ruffleBWcloseBig
    Select the color type:Binary (black & white)
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
MaskImage:[module_num:25|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
    Select the input image:ruffleBWcloseBig
    Name the output image:ruffleBWcloseBigInsideCells
    Use objects or an image as a mask?:Objects
    Select object for mask:cellShrunk
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:26|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
    Select the input image:ruffleBWcloseBigInsideCells
    Name the primary objects to be identified:rufflesInsideCells
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Name the outline image:RufflesInsideCellsOutlines
    Fill holes in identified objects?:Yes
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:actin
    Name the output image:actinRufflesOverlay
    Select outline display mode:Color
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    Width of outlines:2
    Select outlines to display:ruffleOutlines
    Select outline color:Blue
    Select outlines to display:cellShrunkOutlines
    Select outline color:Green

OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:actin
    Name the output image:actinBigRufflesOverlay
    Select outline display mode:Color
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    Width of outlines:2
    Select outlines to display:RufflesInsideCellsOutlines
    Select outline color:Blue
    Select outlines to display:cellShrunkOutlines
    Select outline color:Green

Tile:[module_num:29|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
    Select an input image:actin
    Name the output image:actinTiled
    Tile within cycles or across cycles?:Within cycles
    Number of rows in final tiled image:8
    Number of columns in final tiled image:12
    Begin tiling in which corner of the final image?:top left
    Begin tiling across a row, or down a column?:row
    Tile in meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:actinBigRufflesOverlay

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:actinTiled
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    Select method for constructing file names:Single name
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    Enter single file name:\\g<ImageBaseName>--actinOverlayTiled
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    Select file format to use:jpeg
    Output file location:Elsewhere...|\\g<PathBase>--cellprofiler--20130319/\\g<PathPlate>--cellprofiler/\\g<PathWell>/\\g<PathPos>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:actinBigRufflesOverlay
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    Select method for constructing file names:Single name
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    Enter single file name:\\g<ImageBaseName>--actinOverlay
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    Select file format to use:png
    Output file location:Elsewhere...|\\g<PathBase>--cellprofiler--20130319/\\g<PathPlate>--cellprofiler/\\g<PathWell>/\\g<PathPos>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

MeasureObjectSizeShape:[module_num:32|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
    Select objects to measure:cellShrunk
    Calculate the Zernike features?:No

MaskImage:[module_num:33|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
    Select the input image:ruffleP
    Name the output image:rufflePmasked
    Use objects or an image as a mask?:Image
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    Select image for mask:ruffleBWcloseBigInsideCells
    Invert the mask?:No

MeasureObjectIntensity:[module_num:34|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
    Hidden:4
    Select an image to measure:ruffleBWcloseBig
    Select an image to measure:actin
    Select an image to measure:nucleus
    Select an image to measure:rufflePmasked
    Select objects to measure:cellShrunk
    Select objects to measure:nucleus

ExportToSpreadsheet:[module_num:35|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|\\g<PathBase>--cellprofiler--20130319/\\g<PathPlate>--cellprofiler/\\g<PathWell>/\\g<PathPos>
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Count_nucleus,Image|Count_cellShrunk,Image|ImageQuality_PowerLogLogSlope_nucleus,Image|FileName_cytoRaw,Image|FileName_nucleusRaw,Image|FileName_actinTiled,Image|FileName_actinRaw,Image|FileName_actinBigRufflesOverlay,Image|FileName_actin8bit,Image|PathName_cytoRaw,Image|PathName_nucleusRaw,Image|PathName_actinTiled,Image|PathName_actinRaw,Image|PathName_actinBigRufflesOverlay,Image|PathName_actin8bit,Image|Metadata_posNum,Image|Metadata_Layout,Image|Metadata_siRNAgene,Image|Metadata_wellNum,Image|Metadata_Replicate,Image|Metadata_gene,Image|Metadata_siRNA,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
    Data to export:nucleus
    Combine these object measurements with those of the previous object?:No
    File name:objects.csv
    Use the object name for the file name?:No
    Data to export:cellShrunk
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image.csv
    Use the object name for the file name?:No

CreateBatchFiles:[module_num:36|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
    Store batch files in default output folder?:No
    Output folder path:/g/almfscreen/corallin/Analysis
    Are the cluster computers running Windows?:No
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