CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Output Folder sub-folder|test
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):C01
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:^(?P<platename>.*)--(?P<gene>.*)--(?P<siRNA>.*)--W(?P<wellNum>.*)--P(?P<posNum>.*)--T(?P<time>.*)--Z(?P<z>.*)--(?P<ch>.*)
    Type the regular expression that finds metadata in the subfolder path:(?P<rootPath>.*)[\\\\/](?P<platePath>.*)[\\\\/](?P<wellPath>.*)[\\\\/](?P<posPath>.*)
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Nuclei
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):C02
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<filenameBase>.*)--T(?P<dum1>.*)--(?P<dum2>.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:LKB1
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):C03
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:MOCK
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    Rescale intensities?:No

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:Nuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,10000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:0.85
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:3
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:No
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectIntensity:[module_num:3|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
    Hidden:3
    Select an image to measure:LKB1
    Select an image to measure:MOCK
    Select an image to measure:Nuclei
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:4|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

DisplayDataOnImage:[module_num:5|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_MeanIntensity_MOCK
    Select the image on which to display the measurements:MOCK
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:5
    Image elements to save:Image

DisplayDataOnImage:[module_num:6|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_MeanIntensity_LKB1
    Select the image on which to display the measurements:LKB1
    Text color:green
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:4
    Image elements to save:Image

FilterObjects:[module_num:7|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notes:['Red=MOCK']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
    Name the output objects:MOCK
    Select the object to filter:Nuclei
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:MOCKOutlines
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:Intensity_MeanIntensity_MOCK
    Filter using a minimum measurement value?:Yes
    Minimum value:0.014
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:8|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notes:['']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
    Name the output objects:LKB1
    Select the object to filter:Nuclei
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:LKB1Outlines
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:Intensity_MeanIntensity_LKB1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0042
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_MOCK
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.014

CalculateMath:[module_num:9|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
    Name the output measurement:LKB1divMOCK
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_LKB1
    Multiply the above operand by:1.0
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_MOCK
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:10|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
    Name the output measurement:LKB1plusMOCK
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Count_LKB1
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the second operand measurement type:Image
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    Select the second operand measurement:Count_MOCK
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:11|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
    Name the output measurement:LKB1plusMOCKdivNUC
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_LKB1plusMOCK
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the outline image:ShrunkenNucleiOutlines

GrayToColor:[module_num:13|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
    Select a color scheme:RGB
    Select the input image to be colored red:MOCK
    Select the input image to be colored green:LKB1
    Select the input image to be colored blue:Nuclei
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Overlay
    Select outline display mode:Color
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    Width of outlines:2
    Select outlines to display:LKB1Outlines
    Select outline color:Green
    Select outlines to display:MOCKOutlines
    Select outline color:Red
    Select outlines to display:ShrunkenNucleiOutlines
    Select outline color:White

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:Overlay
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    Select method for constructing file names:Single name
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    Enter single file name:\\g<filenameBase>--overlay
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    Select file format to use:tif
    Output file location:Elsewhere...|\\g<rootPath>/\\g<platePath>--cellprofiler
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:16|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|\\g<rootPath>/\\g<platePath>--cellprofiler/W\\g<wellNum>/P\\g<posNum>
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Count_LKB1,Image|Count_Nuclei,Image|Count_MOCK,Image|FileName_LKB1,Image|FileName_Nuclei,Image|FileName_MOCK,Image|FileName_Overlay,Image|PathName_LKB1,Image|PathName_Nuclei,Image|PathName_MOCK,Image|PathName_Overlay,Image|Math_LKB1divMOCK,Image|Math_LKB1plusMOCK,Image|Math_LKB1plusMOCKdivNUC,Image|Metadata_posNum,Image|Metadata_platePath,Image|Metadata_platename,Image|Metadata_rootPath,Image|Metadata_wellNum,Image|Metadata_filenameBase,Image|Metadata_posPath,Image|Metadata_gene,Image|Metadata_siRNA,Image|Metadata_wellPath,Nuclei|Intensity_MeanIntensity_LKB1,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
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:objects.csv
    Use the object name for the file name?:No
    Data to export:ShrunkenNuclei
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:17|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/sarodrig
    Cluster root path:/home/sarodrig
