CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/Shibire_Dataset_for_Tischi_June_2014
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.*Color.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<treatment>.*)_(?P<expNum>.*)--.*
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:col
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    Channel number:1
    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:col
    Conversion method:Split
    Image type::RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:green
    Convert blue to gray?:Yes
    Name the output image:red
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
ClassifyPixels:[module_num:3|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
    Select the input image:col
    Name of the output probability map:pd
    Class to choose:1
    Input classifier file location:Elsewhere...|/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/Shibire_Dataset_for_Tischi_June_2014
    Classfier File:dots_color__2014_06_23.h5

ClassifyPixels:[module_num:4|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
    Select the input image:red
    Name of the output probability map:pm
    Class to choose:0
    Input classifier file location:Elsewhere...|/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/Shibire_Dataset_for_Tischi_June_2014
    Classfier File:membrane_red__2014_06_23.h5

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:pm
    Name the primary objects to be identified:m
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Name the outline image:mOutlines
    Fill holes in identified objects?:No
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:pd
    Name the primary objects to be identified:dTmp
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Manual threshold:0.8
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:dTmp
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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
    Name the output objects:d
    Select the object to filter:dTmp
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:dOutlines
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:Yes
    Maximum value:1000

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:Yes
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    Name the output image:BlanckOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:dOutlines
    Select outline color:Green
    Select outlines to display:mOutlines
    Select outline color:Red

ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:d
    Name the output objects:dDum
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:No
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:m
    Name the output image:m
    Select the color type:Binary (black & white)
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:d
    Name the output image:d
    Select the color type:Binary (black & white)
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
ImageMath:[module_num:13|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notes:['invert the membrane image']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:mi
    Image or measurement?:Image
    Select the first image:m
    Multiply the first image by:1
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    Image or measurement?:Image
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
Morph:[module_num:14|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
    Select the input image:mi
    Name the output image:dist
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Scale:3

MeasureObjectIntensity:[module_num:15|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
    Hidden:1
    Select an image to measure:dist
    Select objects to measure:d

FilterObjects:[module_num:16|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
    Name the output objects:DotsAtMembrane
    Select the object to filter:d
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:DotsAtMembraneOutlines
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:Intensity_MeanIntensity_dist
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:col
    Name the output image:ColorOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:dOutlines
    Select outline color:Green
    Select outlines to display:mOutlines
    Select outline color:Red
    Select outlines to display:DotsAtMembraneOutlines
    Select outline color:White

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:d
    Calculate the Zernike features?:No

TrackObjects:[module_num:19|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
    Choose a tracking method:Distance
    Select the objects to track:DotsAtMembrane
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    Maximum pixel distance to consider matches:4
    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:TrackedDeltaPuncta
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
TrackObjects:[module_num:20|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
    Choose a tracking method:Distance
    Select the objects to track:d
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    Maximum pixel distance to consider matches:4
    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:TrackedDeltaPunctaAll
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
Tile:[module_num:21|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
    Select an input image:col
    Name the output image:TiledImage
    Tile within cycles or across cycles?:Within cycles
    Number of rows in final tiled image:1
    Number of columns in final tiled image:3
    Begin tiling in which corner of the final image?:top left
    Begin tiling across a row, or down a column?:row
    Tile in meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:ColorOverlay
    Select an additional image to tile:TrackedDeltaPuncta

SaveImages:[module_num:22|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
    Select the type of image to save:Movie
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:col
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--Tiled-cpOut
    Select file format to use:png
    Output file location:Same folder as image|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Select colormap:Greys
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:23|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
    Select the type of image to save:Movie
    Select the image to save:m
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    Select method for constructing file names:From image filename
    Select image name for file prefix:col
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--Membranes-cpOut
    Select file format to use:png
    Output file location:Same folder as image|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Select colormap:Greys
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:24|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
    Select the type of image to save:Movie
    Select the image to save:d
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    Select method for constructing file names:From image filename
    Select image name for file prefix:col
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--Dots-cpOut
    Select file format to use:png
    Output file location:Same folder as image|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Select colormap:Greys
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:25|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/Shibire_Dataset_for_Tischi_June_2014/\\g<treatment>_\\g<expNum>
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:d|TrackObjects_Lifetime_4,d|Intensity_MeanIntensity_dist,d|AreaShape_Area,Image|Count_d,Image|Count_DotsAtMembrane,Image|Metadata_treatment,Image|Metadata_Series,Image|Metadata_expNum,Image|Metadata_Z,Image|Metadata_T,DotsAtMembrane|TrackObjects_Lifetime_4
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image.csv
    Use the object name for the file name?:No
    Data to export:d
    Combine these object measurements with those of the previous object?:No
    File name:objects.csv
    Use the object name for the file name?:No
    Data to export:dDum
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:26|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
    Store batch files in default output folder?:No
    Output folder path:/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/Shibire_Dataset_for_Tischi_June_2014
    Are the cluster computers running Windows?:No
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    Local root path:/home/tischer
    Cluster root path:/home/tischer
