CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/2015-07-06--DeltaNotchStoich
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.*.tif
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:(?P<filename>.*).tif
    Type the regular expression that finds metadata in the subfolder path:^(?P<rootPath>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:im
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    Rescale intensities?:Yes

ClassifyPixels:[module_num:2|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
    Select the input image:im
    Name of the output probability map:pm
    Class to choose:1
    Input classifier file location:Elsewhere...|/g/almf/software/scripts/cellprofiler/2015-07-06--AleksandarNecakov--PunctaVsTotal_NoPMstain--CLUSTER--ILASTIK
    Classfier File:2015-07-06--MembraneAndPuncta.h5

ClassifyPixels:[module_num:3|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
    Select the input image:im
    Name of the output probability map:pd
    Class to choose:2
    Input classifier file location:Elsewhere...|/g/almf/software/scripts/cellprofiler/2015-07-06--AleksandarNecakov--PunctaVsTotal_NoPMstain--CLUSTER--ILASTIK
    Classfier File:2015-07-06--MembraneAndPuncta.h5

IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:pm
    Name the primary objects to be identified:m
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Name the outline image:mOutlines
    Fill holes in identified objects?:No
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:pd
    Name the primary objects to be identified:dTmp
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Manual threshold:0.8
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:dTmp
    Calculate the Zernike features?:No

FilterObjects:[module_num:7|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
    Name the output objects:d
    Select the object to filter:dTmp
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:dOutlines
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:Yes
    Maximum value:1000

ConvertObjectsToImage:[module_num:8|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
    Select the input objects:m
    Name the output image:m
    Select the color type:Binary (black & white)
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:d
    Name the output image:d
    Select the color type:Binary (black & white)
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
ImageMath:[module_num:10|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notes:['get a mask for the the areas containing either dots or membrane']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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:total
    Image or measurement?:Image
    Select the first image:m
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:d
    Multiply the second image by:1
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:total
    Name the primary objects to be identified:total
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Name the outline image:totalOutlines
    Fill holes in identified objects?:No
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
Smooth:[module_num:12|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
    Select the input image:im
    Name the output image:imMed
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2
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
EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:imMed
    Name the output image:imLBC
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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
Smooth:[module_num:14|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
    Select the input image:im
    Name the output image:imMedian
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:100.0
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
ImageMath:[module_num:15|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:imLBCmedian
    Image or measurement?:Image
    Select the first image:im
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:imMedian
    Multiply the second image by:1
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
MeasureImageIntensity:[module_num:16|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
    Select the image to measure:imLBC
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:d
    Select the image to measure:imLBC
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:total
    Select the image to measure:imLBC
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:m
    Select the image to measure:imLBCmedian
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:d
    Select the image to measure:imLBCmedian
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:m
    Select the image to measure:imLBCmedian
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:total

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:imLBCmedian
    Name the output image:dotOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:dOutlines
    Select outline color:Green

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:imLBCmedian
    Name the output image:membraneOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:mOutlines
    Select outline color:Red

Tile:[module_num:19|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
    Select an input image:dotOverlay
    Name the output image:TiledImage
    Tile within cycles or across cycles?:Within cycles
    Number of rows in final tiled image:1
    Number of columns in final tiled image:2
    Begin tiling in which corner of the final image?:top left
    Begin tiling across a row, or down a column?:row
    Tile in meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:membraneOverlay

SaveImages:[module_num:20|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notes:['for some weird reason one has to hardcode the output path here as the Metadata_rootPath does not work...']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:im
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--Tiled-cpOut
    Select file format to use:png
    Output file location:Elsewhere...|/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/2015-07-06--cp/images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Select colormap:Greys
    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:21|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/2015-07-06--cp/tables
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Count_d,Image|Intensity_TotalIntensity_imLBCmedian_total,Image|Intensity_TotalIntensity_imLBCmedian_m,Image|Intensity_TotalIntensity_imLBCmedian_d,Image|Intensity_TotalIntensity_imLBC_total,Image|Intensity_TotalIntensity_imLBC_m,Image|Intensity_TotalIntensity_imLBC_d,Image|Metadata_rootPath,Image|Metadata_filename
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\\g<filename>--image.csv
    Use the object name for the file name?:No

CreateBatchFiles:[module_num:22|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
    Store batch files in default output folder?:No
    Output folder path:/g/almf/group/ALMFstuff/Tischi/projects/AleksandarNecakov_deRenzis/Code--Ilastik_CellProfiler
    Are the cluster computers running Windows?:No
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    Local root path:/home/tischer
    Cluster root path:/home/tischer
