CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:25
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Elsewhere...|Z:\\\\Tischi\\\\projects\\\\ElinEnervald_Monterotondo\\\\2015-06-22--FiSH_MaxProj
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.tif
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:^(?P<filename>.*).tif
    Type the regular expression that finds metadata in the subfolder path:(?P<path>.*)$
    Channel count:2
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:Lamin
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    Channel number:1
    Rescale intensities?:Yes
    Load the input as images or objects?:Images
    Name this loaded image:DNA
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    Channel number:2
    Rescale intensities?:Yes

Smooth:[module_num:2|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
    Select the input image:Lamin
    Name the output image:LaminMedian
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
Morph:[module_num:3|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
    Select the input image:LaminMedian
    Name the output image:LaminErode
    Select the operation to perform:erode
    Number of times to repeat operation:Once
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    Scale:21
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ImageMath:[module_num:4|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:LaminEdge
    Image or measurement?:Image
    Select the first image:LaminMedian
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:LaminErode
    Multiply the second image by:1.0
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
ApplyThreshold:[module_num:5|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
    Select the input image:LaminEdge
    Name the output image:LaminEdgeBW
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.1
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
MaskImage:[module_num:6|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
    Select the input image:LaminMedian
    Name the output image:LaminMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:LaminEdgeBW
    Invert the mask?:No

MeasureImageIntensity:[module_num:7|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
    Select the image to measure:LaminMasked
    Measure the intensity only from areas enclosed by objects?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:LaminMedian
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):200,2000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:200
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Measurement
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    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_LaminMasked
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
Smooth:[module_num:9|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
    Select the input image:DNA
    Name the output image:DNAgauss
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
EnhanceEdges:[module_num:10|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
    Select the input image:DNA
    Name the output image:DnaLoG
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:No
    Gaussian's sigma value:3
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
ImageMath:[module_num:11|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-1.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:DnaLoGinv
    Image or measurement?:Image
    Select the first image:DnaLoG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Nuclei
    Name the output image:NucleiBW
    Select the color format:Binary (black & white)
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
Morph:[module_num:13|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
    Select the input image:NucleiBW
    Name the output image:NucleiDist
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
    Rescale values from 0 to 1?:No

IdentifyPrimaryObjects:[module_num:14|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notes:['the per_object threshold is in fact manual since i fixed the upper and lower bounds. i just use this to not find dots outside of cells.', '']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
    Select the input image:DnaLoGinv
    Name the primary objects to be identified:dots
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:8
    Lower and upper bounds on threshold:0.02,0.021
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    Masking objects:Nuclei
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
MeasureObjectIntensity:[module_num:15|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
    Hidden:1
    Select an image to measure:NucleiDist
    Select objects to measure:dots
    Select objects to measure:Nuclei

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_MaxIntensity_NucleiDist
    Select the image on which to display the measurements:DNA
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

CalculateMath:[module_num:17|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
    Name the output measurement:ZonedDistance
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:dots
    Select the numerator measurement:Intensity_MeanIntensity_NucleiDist
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MaxIntensity_NucleiDist
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Lamin
    Name the output image:LaminOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:DnaOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:dots

Tile:[module_num:20|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
    Select an input image:LaminOverlay
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:DNA
    Select an additional image to tile:DnaOverlay

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|\\\\g<path>--cp-out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
RelateObjects:[module_num:22|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
    Select the input child objects:dots
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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
DisplayDataOnImageAndSaveAsPdf:[module_num:23|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
    Display object or image measurements?:Object
    Select the input objects:dots
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:DNA
    Text color:#8080FF
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Filename (full path) for saving as pdf:\\\\g<path>--cp-out/\\\\g<filename>--dots_ObjectNumber
    Annotation offset (in pixels):0
    Display mode:Text
    Color map:Default
    Display background image?:Yes

DisplayDataOnImageAndSaveAsPdf:[module_num:24|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
    Display object or image measurements?:Object
    Select the input objects:dots
    Measurement to display:Intensity_MeanIntensity_NucleiDist
    Select the image on which to display the measurements:DNA
    Text color:green
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Filename (full path) for saving as pdf:\\\\g<path>--cp-out/\\\\g<filename>--dots_distance
    Annotation offset (in pixels):0
    Display mode:Text
    Color map:Default
    Display background image?:Yes

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<path>--cp-out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:dots|Parent_Nuclei,dots|Number_Object_Number,dots|Intensity_MeanIntensity_NucleiDist,Image|Count_dots,Image|Count_Nuclei,Image|FileName_DNA,Image|FileName_Lamin,Nuclei|Intensity_MaxIntensity_NucleiDist
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
