CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140523145346
GitHash:f5bc9ac
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Treatment>.*)--W(?P<Well>.*)--P(?P<Position>.*)--.*--.*--.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Root>.*)[\\\\\\\\/](?P<Batch>.*)[\\\\\\\\/].*$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "Dapi")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:GFP
    Number of pixels by which to expand the primary objects:60
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureImageQuality:[module_num:7|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:GFP
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
Morph:[module_num:8|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
    Select the input image:GFP
    Name the output image:GFPth
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:11
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ApplyThreshold:[module_num:9|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
    Select the input image:GFPth
    Name the output image:GFPbw
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:3
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:GFPbw
    Name the primary objects to be identified:golgi
    Typical diameter of objects, in pixel units (Min,Max):5,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:golgi
    Calculate the Zernike features?:No

RelateObjects:[module_num:12|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
    Select the input child objects:golgi
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:Yes
    Parent name:Nuclei

DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:golgi
    Measurement to display:Distance_Minimum_Nuclei
    Select the image on which to display the measurements:DNA
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

RescaleIntensity:[module_num:14|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
    Select the input image:GFP
    Name the output image:RescaledGFP
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledGFP
    Name the output image:Overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:golgi
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

Tile:[module_num:16|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
    Select an input image:RescaledGFP
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:Overlay

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Count_Nuclei,Image|ImageQuality_PowerLogLogSlope_GFP,Image|FileName_GFP,Image|FileName_DNA,Image|FileName_TiledImage,Image|PathName_DNA,Image|PathName_GFP,Image|PathName_TiledImage,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Well,Image|Metadata_Batch,Image|Metadata_Treatment,Image|Metadata_Position,Image|Metadata_Root,golgi|Distance_Minimum_Nuclei,golgi|Distance_Centroid_Cells,Cells|Children_golgi_Count,Cells|Mean_golgi_AreaShape_Area,Cells|Mean_golgi_AreaShape_Compactness
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
