CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:117
HasImagePlaneDetails:False

LoadImages:[module_num:1|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notes:['', '']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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|Y:\\\\volker\\\\Multilabelling_20151030_cp_mean7slices\\\\xxx_20151030_xxx
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:13
    Text that these images have in common (case-sensitive):^DAPIforGM.*
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    Extract metadata from where?:Path
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    Type the regular expression that finds metadata in the subfolder path:(?P<root>.*)[\\\\\\\\/].*_(?P<date>.*)_.*[\\\\\\\\/](?P<slide>.*)$
    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxDAPIxx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^ATUB.*tif
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxATUBxx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^(CALNEXIN|ConA).*tif
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxCALNEXINxx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^Ecad.*
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxECADxx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^EEA1.*
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxEEA1xx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^GM130.*
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxGM130xx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^KI67.*
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxKi67xx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^LAMP1.*
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxLAMP1xx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^P62.*
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxP62xx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^Pha.*
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxPHAxx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^Sec31.*
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxSEC31xx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^Vim.*
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    Extract metadata from where?:Path
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    Type the regular expression that finds metadata in the subfolder path:.*--X(?P<xpos>[0-9]+)--(?P<treatment>.*)$
    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxVIMENTINxx
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):^HSP
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:xxHSP60xx
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    Channel number:1
    Rescale intensities?:Yes

ImageMath:[module_num:2|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
    Operation:Add
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:Sum
    Image or measurement?:Image
    Select the first image:xxATUBxx
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:xxCALNEXINxx
    Multiply the second image by:1
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    Image or measurement?:Image
    Select the third image:xxPHAxx
    Multiply the third image by:0.5
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    Image or measurement?:Image
    Select the fourth image:xxVIMENTINxx
    Multiply the fourth image by:1
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    Image or measurement?:Image
    Select the fifth image:xxATUBxx
    Multiply the fifth image by:1.0
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
Smooth:[module_num:3|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
    Select the input image:xxDAPIxx
    Name the output image:SmoothedDAPI
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:8.0
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
Smooth:[module_num:4|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
    Select the input image:Sum
    Name the output image:SmoothedSum
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:SmoothedDAPI
    Name the primary objects to be identified:NucleiTmp
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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notes:['meanProj: Tubulin: ']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
    Select the input objects:NucleiTmp
    Name the objects to be identified:CellsTmpTmp
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:SmoothedSum
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:NucleiValid
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:NucleiValid
    Name the output image:NucleiValid
    Select the color format:Binary (black & white)
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
IdentifySecondaryObjects:[module_num:8|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notes:['zmax: manual threshold = 0.65', 'zmean: manual threshold = 0.35']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
    Select the input objects:NucleiTmp
    Name the objects to be identified:CellsTmp
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:SmoothedSum
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:NucleiValid
    Select objects to measure:CellsTmp

FilterObjects:[module_num:10|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
    Name the output objects:Cells2
    Select the object to filter:CellsTmp
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:Intensity_MaxIntensity_NucleiValid
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:NucleiTmp
    Name the relabeled objects:Nuclei2
    Retain outlines of relabeled objects?:No
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
RescaleIntensity:[module_num:11|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
    Select the input image:Sum
    Name the output image:SumRS
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Nuclei2
    Calculate the Zernike features?:Yes

DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei2
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:xxDAPIxx
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

FilterObjects:[module_num:14|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
    Name the output objects:Nuclei
    Select the object to filter:Nuclei2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3000
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:Cells2
    Name the relabeled objects:Cells
    Retain outlines of relabeled objects?:No
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SmoothedSum
    Name the output image:SumRSOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxDAPIxx
    Name the output image:DapiOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:SumRSOverlay
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_sum--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tif
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:DapiOverlay
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_DAPI--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tif
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
IdentifyTertiaryObjects:[module_num:19|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

ExpandOrShrinkObjects:[module_num:20|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
IdentifyTertiaryObjects:[module_num:21|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
    Select the larger identified objects:Nuclei
    Select the smaller identified objects:ShrunkenNuclei
    Name the tertiary objects to be identified:NuclearPeri
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:NuclearPeri
    Name the output image:NuclearPeri
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:23|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:1.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:NucInv
    Image or measurement?:Image
    Select the first image:NuclearPeri
    Multiply the first image by:-1.0
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    Image or measurement?:Image
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
Morph:[module_num:24|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
    Select the input image:NucInv
    Name the output image:NucDist
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
    Rescale values from 0 to 1?:No

EnhanceOrSuppressFeatures:[module_num:25|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
    Select the input image:xxPHAxx
    Name the output image:xxPHAxx_BigFibres
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness

EnhanceOrSuppressFeatures:[module_num:26|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
    Select the input image:xxATUBxx
    Name the output image:xxATUBxx_LocalVar
    Select the operation:Enhance
    Feature size:10
    Feature type:Texture
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    Smoothing scale:5
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
EnhanceOrSuppressFeatures:[module_num:27|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
    Select the input image:xxCALNEXINxx
    Name the output image:xxCALNEXINxx_LocalVar
    Select the operation:Enhance
    Feature size:10
    Feature type:Texture
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    Smoothing scale:5
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
MaskImage:[module_num:28|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
    Select the input image:xxATUBxx_LocalVar
    Name the output image:xxATUBxxLocalVarCytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MaskImage:[module_num:29|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
    Select the input image:xxATUBxx
    Name the output image:xxATUBxxCytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MaskImage:[module_num:30|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
    Select the input image:xxHSP60xx
    Name the output image:xxHSP60xxCytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MaskImage:[module_num:31|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
    Select the input image:xxPHAxx
    Name the output image:xxPHAxxCytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MaskImage:[module_num:32|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
    Select the input image:xxCALNEXINxx_LocalVar
    Name the output image:xxCALNEXINxxLocalVarCytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MaskImage:[module_num:33|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
    Select the input image:xxCALNEXINxx
    Name the output image:xxCALNEXINxxCytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:34|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
    Hidden:19
    Select an image to measure:xxPHAxx
    Select an image to measure:xxATUBxxCytoplasm
    Select an image to measure:xxHSP60xxCytoplasm
    Select an image to measure:xxPHAxxCytoplasm
    Select an image to measure:xxCALNEXINxxCytoplasm
    Select an image to measure:xxCALNEXINxxLocalVarCytoplasm
    Select an image to measure:xxATUBxx
    Select an image to measure:xxCALNEXINxx
    Select an image to measure:xxDAPIxx
    Select an image to measure:xxECADxx
    Select an image to measure:xxEEA1xx
    Select an image to measure:xxGM130xx
    Select an image to measure:xxHSP60xx
    Select an image to measure:xxKi67xx
    Select an image to measure:xxLAMP1xx
    Select an image to measure:xxP62xx
    Select an image to measure:xxSEC31xx
    Select an image to measure:xxVIMENTINxx
    Select an image to measure:xxATUBxxLocalVarCytoplasm
    Select objects to measure:Cells

IdentifyPrimaryObjects:[module_num:35|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
    Select the input image:SmoothedDAPI
    Name the primary objects to be identified:xxDAPIxx
    Typical diameter of objects, in pixel units (Min,Max):10,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Morph:[module_num:36|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
    Select the input image:xxECADxx
    Name the output image:ECADTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:11
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:37|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
    Select the input image:ECADTophat
    Name the primary objects to be identified:xxECADxx
    Typical diameter of objects, in pixel units (Min,Max):2,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:Cells
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
IdentifyPrimaryObjects:[module_num:38|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
    Select the input image:xxEEA1xx
    Name the primary objects to be identified:xxEEA1xx
    Typical diameter of objects, in pixel units (Min,Max):2,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:20

Morph:[module_num:39|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
    Select the input image:xxLAMP1xx
    Name the output image:LAMP1Tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:21
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:40|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
    Select the input image:xxSEC31xx
    Name the output image:SEC31Tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:21
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:41|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
    Select the input image:xxATUBxx
    Name the output image:ATUBTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:41
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:42|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
    Select the input image:xxHSP60xx
    Name the output image:HSP60Tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:21
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:43|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
    Select the input image:xxKi67xx
    Name the output image:Ki67Tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:41
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:44|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
    Select the input image:xxP62xx
    Name the output image:P62Tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:11
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:45|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
    Select the input image:xxPHAxx
    Name the output image:PHATophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:21
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Smooth:[module_num:46|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
    Select the input image:xxGM130xx
    Name the output image:GM130Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Morph:[module_num:47|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
    Select the input image:GM130Smooth
    Name the output image:GM130Tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:30
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:48|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
    Select the input image:xxCALNEXINxx
    Name the output image:CALNEXINTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:51
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:49|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
    Select the input image:xxEEA1xx
    Name the output image:EEA1Tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:31
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:50|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
    Select the input image:GM130Tophat
    Name the primary objects to be identified:xxGM130xx
    Typical diameter of objects, in pixel units (Min,Max):2,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Masking objects:Cells
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
IdentifyPrimaryObjects:[module_num:51|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
    Select the input image:Ki67Tophat
    Name the primary objects to be identified:xxKi67xx
    Typical diameter of objects, in pixel units (Min,Max):10,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:Cells
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
IdentifyPrimaryObjects:[module_num:52|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
    Select the input image:HSP60Tophat
    Name the primary objects to be identified:xxHSP60xx
    Typical diameter of objects, in pixel units (Min,Max):3,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:Cells
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:53|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
    Select the input image:LAMP1Tophat
    Name the primary objects to be identified:xxLAMP1xx
    Typical diameter of objects, in pixel units (Min,Max):2,400
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:Cells
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
IdentifyPrimaryObjects:[module_num:54|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
    Select the input image:P62Tophat
    Name the primary objects to be identified:xxP62xx
    Typical diameter of objects, in pixel units (Min,Max):2,400
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:Cells
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
IdentifyPrimaryObjects:[module_num:55|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
    Select the input image:PHATophat
    Name the primary objects to be identified:xxPHAxx
    Typical diameter of objects, in pixel units (Min,Max):2,400
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:Cells
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
IdentifyPrimaryObjects:[module_num:56|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
    Select the input image:SEC31Tophat
    Name the primary objects to be identified:xxSEC31xx
    Typical diameter of objects, in pixel units (Min,Max):2,400
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:Cells
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
IdentifyPrimaryObjects:[module_num:57|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
    Select the input image:xxVIMENTINxx
    Name the primary objects to be identified:xxVIMENTINxx
    Typical diameter of objects, in pixel units (Min,Max):2,400
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:41

ImageMath:[module_num:58|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxATUBxxDist
    Image or measurement?:Image
    Select the first image:ATUBTophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:59|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxCALNEXINxxDist
    Image or measurement?:Image
    Select the first image:CALNEXINTophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:60|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxECADxxDist
    Image or measurement?:Image
    Select the first image:ECADTophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:61|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxEEA1xxDist
    Image or measurement?:Image
    Select the first image:EEA1Tophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:62|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxGM130xxDist
    Image or measurement?:Image
    Select the first image:GM130Tophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:63|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxHSP60xxDist
    Image or measurement?:Image
    Select the first image:HSP60Tophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:64|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxKi67xxDist
    Image or measurement?:Image
    Select the first image:Ki67Tophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:65|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxLAMP1xxDist
    Image or measurement?:Image
    Select the first image:LAMP1Tophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:66|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxP62xxDist
    Image or measurement?:Image
    Select the first image:P62Tophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:67|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxPHAxxDist
    Image or measurement?:Image
    Select the first image:PHATophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
ImageMath:[module_num:68|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:xxSEC31xxDist
    Image or measurement?:Image
    Select the first image:SEC31Tophat
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucDist
    Multiply the second image by:1.0
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
MeasureObjectIntensity:[module_num:69|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
    Hidden:11
    Select an image to measure:xxATUBxxDist
    Select an image to measure:xxCALNEXINxxDist
    Select an image to measure:xxECADxxDist
    Select an image to measure:xxEEA1xxDist
    Select an image to measure:xxGM130xxDist
    Select an image to measure:xxHSP60xxDist
    Select an image to measure:xxKi67xxDist
    Select an image to measure:xxLAMP1xxDist
    Select an image to measure:xxP62xxDist
    Select an image to measure:xxPHAxxDist
    Select an image to measure:xxSEC31xxDist
    Select objects to measure:Cells

OverlayOutlines:[module_num:70|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxATUBxx
    Name the output image:OverlayATUB
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:71|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxGM130xx
    Name the output image:OverlayGM130
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxGM130xx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:72|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxSEC31xx
    Name the output image:OverlaySEC31
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxSEC31xx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:73|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxLAMP1xx
    Name the output image:OverlayLAMP1
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxLAMP1xx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:74|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxECADxx
    Name the output image:OverlayECAD
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxECADxx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:75|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxEEA1xx
    Name the output image:OverlayEEA1
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxEEA1xx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:76|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxCALNEXINxx
    Name the output image:OverlayCALNEXIN
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:77|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxHSP60xx
    Name the output image:OverlayHSP60
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxHSP60xx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:78|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxPHAxx
    Name the output image:OverlayPHA
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxPHAxx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:79|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxP62xx
    Name the output image:OverlayP62
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxP62xx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:80|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxKi67xx
    Name the output image:OverlayKi67
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxKi67xx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:81|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:xxP62xx
    Name the output image:OverlayP62
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:xxP62xx
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

SaveImages:[module_num:82|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
    Select the type of image to save:Image
    Select the image to save:OverlayGM130
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_gm130--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:83|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
    Select the type of image to save:Image
    Select the image to save:OverlaySEC31
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_sec31--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:84|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
    Select the type of image to save:Image
    Select the image to save:OverlayLAMP1
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_lamp1--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:85|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
    Select the type of image to save:Image
    Select the image to save:OverlayECAD
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_ecad--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:86|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
    Select the type of image to save:Image
    Select the image to save:OverlayEEA1
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_eea1--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:87|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
    Select the type of image to save:Image
    Select the image to save:OverlayHSP60
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_hsp60--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:88|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
    Select the type of image to save:Image
    Select the image to save:OverlayCALNEXIN
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_calnexin--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:89|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
    Select the type of image to save:Image
    Select the image to save:OverlayATUB
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_atub--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:90|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
    Select the type of image to save:Image
    Select the image to save:OverlayPHA
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_pha--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:91|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
    Select the type of image to save:Image
    Select the image to save:OverlayP62
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_p62--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:92|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
    Select the type of image to save:Image
    Select the image to save:OverlayKi67
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_ki67--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:OverlayP62
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    Select method for constructing file names:Single name
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    Enter single file name:outlines_p62--\\\\g<date>--X\\\\g<xpos>--\\\\g<treatment>
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:94|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
    Select objects to measure:xxDAPIxx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:95|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
    Select objects to measure:xxECADxx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:96|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
    Select objects to measure:xxEEA1xx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:97|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
    Select objects to measure:xxGM130xx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:98|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
    Select objects to measure:xxHSP60xx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:99|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
    Select objects to measure:xxKi67xx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:100|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
    Select objects to measure:xxLAMP1xx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:101|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
    Select objects to measure:xxP62xx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:102|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
    Select objects to measure:xxPHAxx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:103|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
    Select objects to measure:xxSEC31xx
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:104|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
    Select objects to measure:xxVIMENTINxx
    Calculate the Zernike features?:No

RelateObjects:[module_num:105|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
    Select the input child objects:xxDAPIxx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:106|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
    Select the input child objects:xxECADxx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:107|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
    Select the input child objects:xxEEA1xx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:108|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
    Select the input child objects:xxGM130xx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:109|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
    Select the input child objects:xxHSP60xx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:110|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
    Select the input child objects:xxKi67xx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:111|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
    Select the input child objects:xxLAMP1xx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:112|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
    Select the input child objects:xxP62xx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:113|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
    Select the input child objects:xxPHAxx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:114|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
    Select the input child objects:xxSEC31xx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:115|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
    Select the input child objects:xxVIMENTINxx
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
MeasureObjectSizeShape:[module_num:116|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:117|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<root>--cp_out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Cells|Intensity_StdIntensity_xxCALNEXINxxCytoplasm,Cells|Intensity_StdIntensity_xxATUBxxCytoplasm,Cells|Intensity_StdIntensity_xxHSP60xxCytoplasm,Cells|Intensity_StdIntensity_xxPHAxxCytoplasm,Cells|Intensity_MeanIntensity_xxATUBxxLocalVarCytoplasm,Cells|Intensity_MeanIntensity_xxCALNEXINxxLocalVarCytoplasm,Cells|Intensity_IntegratedIntensity_xxVIMENTINxx,Cells|Intensity_IntegratedIntensity_xxECADxx,Cells|Intensity_IntegratedIntensity_xxP62xx,Cells|Intensity_IntegratedIntensity_xxATUBxx,Cells|Intensity_IntegratedIntensity_xxKi67xxDist,Cells|Intensity_IntegratedIntensity_xxLAMP1xx,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
