CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150731144645
GitHash:1177d3e
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Folder>.*)[\\\\\\\\/](?P<Treatment>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:mtRaw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:mtRaw
    Name the output image:mt
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:10,-10
    Top and bottom rectangle positions:10,-10
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    Remove empty rows and columns?:All
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
Morph:[module_num:6|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
    Select the input image:mt
    Name the output image:mtth
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:11
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
EnhanceEdges:[module_num:7|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notes:['this is a problem as the LoG removes branch-points']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
    Select the input image:mt
    Name the output image:mtLoGtmp
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:No
    Gaussian's sigma value:1.5
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
ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.5
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:mtLog
    Image or measurement?:Image
    Select the first image:mtLoGtmp
    Multiply the first image by:-1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:9|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notes:['find MTs in th image  (manual 0.08 works well). ', 'maybe Otsu also works well?', '']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
    Select the input image:mtth
    Name the primary objects to be identified:mtth
    Typical diameter of objects, in pixel units (Min,Max):5,40000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.08
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
IdentifyPrimaryObjects:[module_num:10|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notes:['find mt in LoG image (not used, was just a try)']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
    Select the input image:mtLog
    Name the primary objects to be identified:mtLoG
    Typical diameter of objects, in pixel units (Min,Max):3,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.501
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:mtth
    Name the output image:mtbw
    Select the color format:Binary (black & white)
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
Morph:[module_num:12|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
    Select the input image:mtbw
    Name the output image:mtskel
    Select the operation to perform:skelpe
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:13|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notes:['other skeletonisation algorithm (does not work as well, has more spurs and more rugged microtubules)']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
    Select the input image:mtbw
    Name the output image:mtskeltest
    Select the operation to perform:skel
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:14|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
    Select the input image:mtskel
    Name the output image:branchpoints
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:15|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
    Select the input image:mt
    Name the output image:mtDilate
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:3
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:mtDilate
    Name the primary objects to be identified:cell
    Typical diameter of objects, in pixel units (Min,Max):50,40000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:cell
    Name the output image:cellbw
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:18|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
    Select a color scheme:RGB
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    Select the image to be colored green:mt
    Select the image to be colored blue:branchpoints
    Name the output image:mtBranches
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:19|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
    Select a color scheme:RGB
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    Select the image to be colored green:mt
    Select the image to be colored blue:mtskel
    Name the output image:mtMT
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:mt
    Name the output image:mtCell
    Outline display mode:Color
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    Width of outlines:3
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:cell

Tile:[module_num:21|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
    Select an input image:mtCell
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:mtMT
    Select an additional image to tile:mtBranches
    Select an additional image to tile:mtbw

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:mtRaw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--\\\\g<Treatment>--segmentation
    Saved file format:png
    Output file location:Elsewhere...|\\\\g<Folder>--cp_out
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureImageIntensity:[module_num:23|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
    Select the image to measure:branchpoints
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:cell
    Select the image to measure:mtskel
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:cell
    Select the image to measure:cellbw
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:mtbw
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:cell

MeasureObjectSizeShape:[module_num:24|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
    Select objects to measure:cell
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<Folder>--cp_out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|FileName_mtRaw,Image|Intensity_TotalIntensity_mtskel_cell,Image|Intensity_TotalIntensity_mtbw_cell,Image|Intensity_TotalIntensity_cellbw,Image|Intensity_TotalIntensity_branchpoints_cell
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::BranchingAnalysis_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
