CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/almfscreen/embo_cbb_course_2015/Cube5_batch2
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Dapi
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:^(?P<Treatment>.*)--W(?P<WellNum>.*)--P(?P<PosNum>.*)--Z.*
    Type the regular expression that finds metadata in the subfolder path:(?P<rootPath>.*)[\\\\/](?P<platePath>.*)[\\\\/]data$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Dna
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):GFP
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:^(?P<FullFilename>.*)
    Type the regular expression that finds metadata in the subfolder path:(?P<FullPath>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:GolgiRaw
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    Rescale intensities?:Yes

RescaleIntensity:[module_num:2|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notes:['Rescale to 12bit and subtract background']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
    Select the input image:GolgiRaw
    Name the output image:Golgi
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.5003,0.5625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
Morph:[module_num:3|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notes:['Separates foreground from diffusive background']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
    Select the input image:Golgi
    Name the output image:GolgiTophatLarge
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:20

Morph:[module_num:4|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notes:['Separates small dot or line-like features from blob-like ("compact") features']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
    Select the input image:GolgiTophatLarge
    Name the output image:GolgiTophatSmall
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:10

Morph:[module_num:5|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notes:['Separates tubular from vesicular structures']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
    Select the input image:GolgiTophatSmall
    Name the output image:GolgiLines
    Select the operation to perform:openlines
    Number of times to repeat operation:Once
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    Scale:30

ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GolgiDots
    Image or measurement?:Image
    Select the first image:GolgiTophatSmall
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:GolgiLines
    Multiply the second image by:1
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
ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GolgiBlobs
    Image or measurement?:Image
    Select the first image:GolgiTophatLarge
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:GolgiTophatSmall
    Multiply the second image by:1
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GolgiDiffuse
    Image or measurement?:Image
    Select the first image:Golgi
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:GolgiTophatLarge
    Multiply the second image by:1
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
Smooth:[module_num:9|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
    Select the input image:Dna
    Name the output image:DnaSmooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:5
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:DnaSmooth
    Name the primary objects to be identified:NucleiTmpTmp
    Typical diameter of objects, in pixel units (Min,Max):30,1000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:NucleiTmpTmp
    Name the objects to be identified:CellsTmp
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Golgi
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    Number of pixels by which to expand the primary objects:40
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:NucleiTmp
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:Golgi
    Select objects to measure:CellsTmp

DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:CellsTmp
    Measurement to display:Intensity_MeanIntensity_Golgi
    Select the image on which to display the measurements:Golgi
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:5
    Image elements to save:Image

FilterObjects:[module_num:14|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
    Name the output objects:Cells
    Select the object to filter:CellsTmp
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:CellsOutlines
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    Measurement count:1
    Additional object count:1
    Select the measurement to filter by:Intensity_MeanIntensity_Golgi
    Filter using a minimum measurement value?:Yes
    Minimum value:0.002
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:NucleiTmp
    Name the relabeled objects:Nuclei
    Retain outlines of relabeled objects?:Yes
    Name the outline image:NucleiOutlines

DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Location_Center_Y
    Select the image on which to display the measurements:Dna
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

Crop:[module_num:16|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
    Select the input image:GolgiTophatLarge
    Name the output image:GolgiTopHatLargeCrop
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:Cells

IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:GolgiTopHatLargeCrop
    Name the primary objects to be identified:Golgi
    Typical diameter of objects, in pixel units (Min,Max):2,4000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RobustBackground PerObject
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Name the outline image:GolgiOutlines
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
MaskImage:[module_num:18|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
    Select the input image:GolgiBlobs
    Name the output image:GolgiBlobsMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Golgi
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    Invert the mask?:No

MaskImage:[module_num:19|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
    Select the input image:GolgiDots
    Name the output image:GolgiDotsMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Golgi
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    Invert the mask?:No

MaskImage:[module_num:20|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
    Select the input image:GolgiLines
    Name the output image:GolgiLinesMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Golgi
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:21|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
    Hidden:5
    Select an image to measure:Golgi
    Select an image to measure:GolgiDiffuse
    Select an image to measure:GolgiBlobsMasked
    Select an image to measure:GolgiDotsMasked
    Select an image to measure:GolgiLinesMasked
    Select objects to measure:Cells

Morph:[module_num:22|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
    Select the input image:Dna
    Name the output image:DnaTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

MeasureObjectIntensity:[module_num:23|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
    Hidden:2
    Select an image to measure:DnaTophat
    Select an image to measure:Dna
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:24|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
    Select objects to measure:Nuclei
    Select objects to measure:Golgi
    Calculate the Zernike features?:No

FilterObjects:[module_num:25|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
    Name the output objects:MaxGolgi
    Select the object to filter:Golgi
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cells
    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:AreaShape_Area
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
MeasureObjectSizeShape:[module_num:26|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
    Select objects to measure:MaxGolgi
    Calculate the Zernike features?:No

RescaleIntensity:[module_num:27|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
    Select the input image:Golgi
    Name the output image:GolgiRS
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:28|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
    Select the input image:Dna
    Name the output image:DnaRS
    Select rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:29|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
    Select a color scheme:RGB
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    Select the input image to be colored green:GolgiRS
    Select the input image to be colored blue:DnaRS
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Overlay
    Select outline display mode:Color
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    Width of outlines:2
    Select outlines to display:NucleiOutlines
    Select outline color:Blue
    Select outlines to display:GolgiOutlines
    Select outline color:Green
    Select outlines to display:CellsOutlines
    Select outline color:Red

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:Overlay
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    Select method for constructing file names:Single name
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    Enter single file name:\\g<platePath>--\\g<Treatment>--\\g<WellNum>--\\g<PosNum>--overlay
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    Select file format to use:png
    Output file location:Elsewhere...|\\g<rootPath>--cp/images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:GolgiRS
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    Select method for constructing file names:Single name
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    Enter single file name:\\g<platePath>--\\g<Treatment>--\\g<WellNum>--\\g<PosNum>--Golgi
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    Select file format to use:png
    Output file location:Elsewhere...|\\g<rootPath>--cp/images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

MeasureImageQuality:[module_num:33|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:Dna
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Window size for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
RelateObjects:[module_num:34|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
    Select the input child objects:Golgi
    Select the input parent objects:Cells
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:35|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
    Select the input child objects:Nuclei
    Select the input parent objects:Cells
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:36|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
    Select the input child objects:MaxGolgi
    Select the input parent objects:Cells
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ExportToSpreadsheet:[module_num:37|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\g<rootPath>--cp/tables
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Count_Nuclei,Image|ImageQuality_PowerLogLogSlope_Dna,Image|FileName_GolgiRaw,Image|FileName_Dna,Image|FileName_GolgiRS,Image|FileName_Overlay,Image|PathName_GolgiRaw,Image|PathName_Dna,Image|PathName_GolgiRS,Image|PathName_Overlay,Image|Metadata_PosNum,Image|Metadata_platePath,Image|Metadata_FullFilename,Image|Metadata_rootPath,Image|Metadata_WellNum,Image|Metadata_Treatment,Image|Metadata_FullPath,Nuclei|AreaShape_Area,Cells|Intensity_IntegratedIntensity_GolgiLinesMasked,Cells|Intensity_IntegratedIntensity_GolgiDotsMasked,Cells|Intensity_IntegratedIntensity_GolgiDiffuse,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
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\\g<platePath>--W\\g<WellNum>--P\\g<PosNum>--image.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:\\g<platePath>--W\\g<WellNum>--P\\g<PosNum>--objects.csv
    Use the object name for the file name?:No

CreateBatchFiles:[module_num:38|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
    Store batch files in default output folder?:No
    Output folder path:/g/almfscreen/embo_cbb_course_2015
    Are the cluster computers running Windows?:No
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    Local root path:/home/tischer
    Cluster root path:/home/tischer
