CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/noh/Niccolo/Imaging/test
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.tif
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    Extract metadata from where?:Path
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    Type the regular expression that finds metadata in the subfolder path:(?P<root>.*)[\\\\/](?P<plate>.*)[\\\\/]data$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:im
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    Rescale intensities?:Yes

Resize:[module_num:2|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
    Select the input image:im
    Name the output image:imResized
    Select resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.2
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

ImageMath:[module_num:3|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Inverted
    Image or measurement?:Image
    Select the first image:imResized
    Multiply the first image by:1
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    Image or measurement?:Image
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
Morph:[module_num:4|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
    Select the input image:Inverted
    Name the output image:InvertedOpen
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:6

Morph:[module_num:5|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
    Select the input image:InvertedOpen
    Name the output image:InvertedOpenTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:40

Smooth:[module_num:6|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
    Select the input image:InvertedOpen
    Name the output image:InvertedOpenMedian
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:80
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
ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedOpenMinusMedian
    Image or measurement?:Image
    Select the first image:InvertedOpen
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:InvertedOpenMedian
    Multiply the second image by:1
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:InvertedOpenMinusMedian
    Name the primary objects to be identified:Blobs
    Typical diameter of objects, in pixel units (Min,Max):5,400000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Kapur Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:No
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Blobs
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:InvertedOpenMinusMedian
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:2
    Select outlines to display:PrimaryOutlines
    Select outline color:Red

RescaleIntensity:[module_num:11|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
    Select the input image:imResized
    Name the output image:RescaledBlue
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:12|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
    Select the input image:InvertedOpenMinusMedian
    Name the output image:ProcessedRescaled
    Select rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ProcessedRescaled
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:3
    Select outlines to display:PrimaryOutlines
    Select outline color:Red

Tile:[module_num:14|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
    Select an input image:RescaledBlue
    Name the output image:TiledImage
    Tile within cycles or across cycles?:Within cycles
    Number of rows in final tiled image:8
    Number of columns in final tiled image:12
    Begin tiling in which corner of the final image?:top left
    Begin tiling across a row, or down a column?:row
    Tile in meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OrigOverlay

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:im
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:-overlay
    Select file format to use:png
    Output file location:Elsewhere...|\\g<root>/\\g<plate>--cp
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:16|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\g<root>/\\g<plate>--cp
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Count_Blobs,Image|FileName_im,Image|FileName_TiledImage,Image|PathName_im,Image|PathName_TiledImage,Image|Metadata_plate,Blobs|AreaShape_Perimeter,Blobs|AreaShape_FormFactor,Blobs|AreaShape_Area,Blobs|AreaShape_Eccentricity
    Data to export:Blobs
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
