CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/almf/software/scripts/cellprofiler/MorphDecompExamples
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Dapi
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Dna
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):GFP
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Golgi
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    Rescale intensities?:Yes

Morph:[module_num:2|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notes:['Separates structures from diffusive background']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
    Select the input image:Golgi
    Name the output image:GolgiStructures
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:15

Morph:[module_num:3|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notes:['Separates tubular from vesicular structures']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
    Select the input image:GolgiStructures
    Name the output image:GolgiTubular
    Select the operation to perform:openlines
    Number of times to repeat operation:Once
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    Scale:20

ImageMath:[module_num:4|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GolgiVesicular
    Image or measurement?:Image
    Select the first image:GolgiStructures
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:GolgiTubular
    Multiply the second image by:1
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
ImageMath:[module_num:5|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GolgiDiffuse
    Image or measurement?:Image
    Select the first image:Golgi
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:GolgiStructures
    Multiply the second image by:1
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
Smooth:[module_num:6|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
    Select the input image:Dna
    Name the output image:DnaSmooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:5
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DnaSmooth
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,1000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Golgi
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    Number of pixels by which to expand the primary objects:10
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

MeasureObjectIntensity:[module_num:9|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
    Hidden:4
    Select an image to measure:Golgi
    Select an image to measure:GolgiDiffuse
    Select an image to measure:GolgiVesicular
    Select an image to measure:GolgiTubular
    Select objects to measure:Cells

CalculateMath:[module_num:10|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
    Name the output measurement:Total
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_Golgi
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_IntegratedIntensity_Golgi
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:11|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
    Name the output measurement:Diffuse
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_GolgiDiffuse
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_IntegratedIntensity_Golgi
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:12|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
    Name the output measurement:Vesicular
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_GolgiVesicular
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_IntegratedIntensity_Golgi
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:13|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
    Name the output measurement:Tubular
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_GolgiTubular
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_IntegratedIntensity_Golgi
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Math_Total
    Select the image on which to display the measurements:Golgi
    Text color:red
    Name the output image that has the measurements displayed:GolgiTotalDisplay
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Math_Diffuse
    Select the image on which to display the measurements:GolgiDiffuse
    Text color:red
    Name the output image that has the measurements displayed:GolgiDiffuseDisplay
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Math_Tubular
    Select the image on which to display the measurements:GolgiTubular
    Text color:red
    Name the output image that has the measurements displayed:GolgiTubularDisplay
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Math_Vesicular
    Select the image on which to display the measurements:GolgiVesicular
    Text color:red
    Name the output image that has the measurements displayed:GolgiVesicularDisplay
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

Tile:[module_num:18|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
    Select an input image:GolgiTotalDisplay
    Name the output image:TiledImage
    Tile within cycles or across cycles?:Within cycles
    Number of rows in final tiled image:8
    Number of columns in final tiled image:12
    Begin tiling in which corner of the final image?:top left
    Begin tiling across a row, or down a column?:row
    Tile in meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:GolgiDiffuseDisplay
    Select an additional image to tile:GolgiTubularDisplay
    Select an additional image to tile:GolgiVesicularDisplay
