CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Treatment>.*)--(?P<Date>.*)--(?P<Channel>.*)--(?P<TimeFrame>.*).*.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<dataFolder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does contain "--Dex")
    Name to assign these images:m2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "--proIns")
    Name to assign these images:m1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "--mask")
    Name to assign these images:mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:dataFolder

Smooth:[module_num:5|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
    Select the input image:m1
    Name the output image:m1Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1
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
Smooth:[module_num:6|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
    Select the input image:m2
    Name the output image:m2Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1
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
Morph:[module_num:7|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
    Select the input image:m1Smooth
    Name the output image:m1SmoothTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:7
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:8|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
    Select the input image:m2Smooth
    Name the output image:m2SmoothTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:7
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:9|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notes:['# Explore different Thresholds ']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
    Select the input image:mask
    Name the primary objects to be identified:masks
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.02
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
MeasureObjectSizeShape:[module_num:10|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notes:['this is to distinguish background masks from cell masks']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
    Select objects to measure:masks
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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notes:['# adapt the area that distinguishes background mask from cell masks (also in next module)']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
    Name the output objects:background
    Select the object to filter:masks
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:200

FilterObjects:[module_num:12|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notes:['# adapt the area that distinguishes background mask from cell masks (same as in previous module)']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
    Name the output objects:cells
    Select the object to filter:masks
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:13|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notes:['# auto threshold', '# adapt the Threshold correction factor', '']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
    Select the input image:m1SmoothTophat
    Name the primary objects to be identified:m1
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:3
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:cells
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
MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:cells
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:15|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
    Hidden:2
    Select an image to measure:m2SmoothTophat
    Select an image to measure:m1SmoothTophat
    Select objects to measure:m1
    Select objects to measure:background

TrackObjects:[module_num:16|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notes:['']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
    Choose a tracking method:LAP
    Select the objects to track:m1
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    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:m1Tracked
    Select the motion model:Random
    Number of standard deviations for search radius:3
    Search radius limit, in pixel units (Min,Max):10,10
    Run the second phase of the LAP algorithm?:No
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    Filter objects by lifetime?:No
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
RelateObjects:[module_num:17|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
    Select the input child objects:m1
    Select the input parent objects:cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RescaleIntensity:[module_num:18|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
    Select the input image:m1SmoothTophat
    Name the output image:m1SmoothTophatRS
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:19|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
    Select the input image:m2SmoothTophat
    Name the output image:m2SmoothTophatRS
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:m1SmoothTophatRS
    Name the output image:m1Overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:m1
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:cells
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    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:background

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:m2SmoothTophatRS
    Name the output image:m2Overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:m1
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:cells
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    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:background

Tile:[module_num:22|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
    Select an input image:m1Overlay
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:m2Overlay
    Select an additional image to tile:m1Tracked

SaveImages:[module_num:23|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
    Select the type of image to save:Movie
    Select the image to save:TiledImage
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Treatment>--\\\\g<Date>
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    Saved file format:png
    Output file location:Elsewhere...|\\\\g<dataFolder>--cp-out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Saved movie format:avi

DisplayDataOnImageAndSaveAsPdf:[module_num:24|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
    Display object or image measurements?:Object
    Select the input objects:m1
    Measurement to display:TrackObjects_Label
    Select the image on which to display the measurements:m1Tracked
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):2
    Number of decimals:0
    Image elements to save:Image
    Filename (full path) for saving as pdf:\\\\g<dataFolder>--cp-out/\\\\g<Treatment>--\\\\g<Date>--T\\\\g<TimeFrame>--ObjectLabel
    Annotation offset (in pixels):0
    Display mode:Text
    Color map:Yes
    Display background image?:Yes

DisplayDataOnImageAndSaveAsPdf:[module_num:25|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
    Display object or image measurements?:Object
    Select the input objects:m1
    Measurement to display:Intensity_MeanIntensity_m2SmoothTophat
    Select the image on which to display the measurements:m2SmoothTophat
    Text color:#FF8000
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):2
    Number of decimals:3
    Image elements to save:Image
    Filename (full path) for saving as pdf:\\\\g<dataFolder>--cp-out/\\\\g<Treatment>--\\\\g<Date>--T\\\\g<TimeFrame>--m2Intens
    Annotation offset (in pixels):0
    Display mode:Text
    Color map:Yes
    Display background image?:Yes

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<dataFolder>--cp-out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Metadata_FileLocation,Image|Metadata_Date,Image|Metadata_dataFolder,Image|Metadata_Treatment,m1|TrackObjects_ParentObjectNumber,m1|TrackObjects_Lifetime,m1|TrackObjects_Label,m1|TrackObjects_ParentImageNumber,m1|Intensity_MeanIntensity_m2SmoothTophat,m1|Intensity_MeanIntensity_m1SmoothTophat,m1|Location_Center_Y,m1|Location_Center_X,cells|AreaShape_Area,cells|Children_m1_Count,cells|Mean_m1_Intensity_IntegratedIntensity_m2SmoothTophat,cells|Mean_m1_Intensity_IntegratedIntensity_m1SmoothTophat
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:m1
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:background
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
