CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Root>.*)[\\\\\\\\/](?P<Date>.*)[\\\\\\\\/](?P<Treatment>.*)[\\\\\\\\/](?P<Stage>.*)[\\\\\\\\/](?P<Replicate>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^.*--(?P<Timepoint>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:delta
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceEdges:[module_num:5|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notes:['enhance the dots for segmentation']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
    Select the input image:delta
    Name the output image:deltaLog
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:No
    Gaussian's sigma value:1.30
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.5
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:clusters
    Image or measurement?:Image
    Select the first image:deltaLog
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:clusters
    Name the primary objects to be identified:clusters
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,1
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:delta
    Name the output image:deltaOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#FF8000
    Load outlines from an image or objects?:Objects
    Select objects to display:clusters

Tile:[module_num:9|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
    Select an input image:delta
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:deltaOverlay

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:delta
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--deltaOverlay
    Saved file format:png
    Output file location:Elsewhere...|Z:\\\\\\\\common\\\\\\\\Rohit\\\\\\\\10th August_Notch intra vs Delta Cry2_kinetics--cp_out\\\\\\\\280915_NotchintraGFPbleachcorr_lateectoderm\\\\\\\\280915_NotchintraGFPbleachcorr_lateectoderm_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
Morph:[module_num:11|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
    Select the input image:delta
    Name the output image:deltaTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:7
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Smooth:[module_num:12|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
    Select the input image:delta
    Name the output image:deltaMedian
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:21
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
ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:deltaMinusMedian
    Image or measurement?:Image
    Select the first image:delta
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:deltaMedian
    Multiply the second image by:1.0
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
MeasureObjectIntensity:[module_num:14|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
    Hidden:2
    Select an image to measure:deltaTophat
    Select an image to measure:deltaMinusMedian
    Select objects to measure:clusters

MeasureImageIntensity:[module_num:15|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
    Select the image to measure:deltaMinusMedian
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:deltaTophat
    Measure the intensity only from areas enclosed by objects?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Z:\\\\\\\\common\\\\\\\\Rohit\\\\\\\\10th August_Notch intra vs Delta Cry2_kinetics--cp_out\\\\\\\\280915_NotchintraGFPbleachcorr_lateectoderm\\\\\\\\280915_NotchintraGFPbleachcorr_lateectoderm_2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:clusters|Intensity_IntegratedIntensity_deltaMinusMedian,clusters|Intensity_IntegratedIntensity_deltaTophat,Image|Count_clusters,Image|Intensity_TotalIntensity_deltaMinusMedian,Image|Intensity_TotalIntensity_deltaTophat,Image|PathName_TiledImage,Image|PathName_delta,Image|FileName_TiledImage,Image|FileName_delta,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Timepoint,Image|Metadata_Replicate,Image|Metadata_Treatment,Image|Metadata_Date,Image|Metadata_Root
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
