CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150728132743
GitHash:f40fab5
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^.*--(?P<Row>[A-Z]{1}).*--W(?P<Well>.*)--.*--.*--.*--.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<PlateFolder>.*)[/\\\\\\\\].*[/\\\\\\\\].*$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<ImageSetName>.*)--.*.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (file does contain "C01")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C02")
    Name to assign these images:Old
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C03")
    Name to assign these images:New
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Find Nuclei, excluding clumps']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
    Select the input image:Nucleus
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.1
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Find all nuclei, only used for finding the image background later', 'this approach only works if there are no stainings outside the nuclei (e.g., would not work with the mitochondrial background)']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
    Select the input image:Nucleus
    Name the primary objects to be identified:AllNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.1
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
MaskImage:[module_num:7|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
    Select the input image:New
    Name the output image:NewMaskOutsideNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:AllNuclei
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:8|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
    Select the image to measure:NewMaskOutsideNuclei
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:NewMinusBG
    Image or measurement?:Image
    Select the first image:New
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_NewMaskOutsideNuclei

MaskImage:[module_num:10|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
    Select the input image:Old
    Name the output image:OldMaskOutsideNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:AllNuclei
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:11|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
    Select the image to measure:OldMaskOutsideNuclei
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:OldMinusBG
    Image or measurement?:Image
    Select the first image:New
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_OldMaskOutsideNuclei

Morph:[module_num:13|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notes:['The Scale is the centromere diameter in the image in pixels']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
    Select the input image:Old
    Name the output image:OldTophatSmall
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:6
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Find Centromeres.', 'This is a manual threshold using the Lower and Upper bounds. The Automated Per Object Method is only fake in order to exclude pixels outside Nuclei, for later visualisation.']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
    Select the input image:OldTophatSmall
    Name the primary objects to be identified:OldCentromeres
    Typical diameter of objects, in pixel units (Min,Max):2,40000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0                                  
    Lower and upper bounds on threshold:0.004,0.004
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    Masking objects:Nuclei
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MaskImage:[module_num:15|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
    Select the input image:OldTophatSmall
    Name the output image:OldTophatSmallCentromereMask
    Use objects or an image as a mask?:Objects
    Select object for mask:OldCentromeres
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    Invert the mask?:No

Morph:[module_num:16|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
    Select the input image:New
    Name the output image:NewTophatSmall
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:6
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:NewTophatSmall
    Name the primary objects to be identified:NewCentromeres
    Typical diameter of objects, in pixel units (Min,Max):2,40000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.004,0.004
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    Masking objects:Nuclei
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MaskImage:[module_num:18|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
    Select the input image:NewTophatSmall
    Name the output image:NewTophatSmallCentromereMask
    Use objects or an image as a mask?:Objects
    Select object for mask:NewCentromeres
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:19|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
    Hidden:4
    Select an image to measure:OldTophatSmallCentromereMask
    Select an image to measure:OldMinusBG
    Select an image to measure:NewTophatSmallCentromereMask
    Select an image to measure:NewMinusBG
    Select objects to measure:Nuclei

RescaleIntensity:[module_num:20|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
    Select the input image:Nucleus
    Name the output image:NucleusRS
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:21|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
    Select the input image:New
    Name the output image:NewRS
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.1
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
RescaleIntensity:[module_num:22|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
    Select the input image:Old
    Name the output image:OldRS
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.1
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NucleusRS
    Name the output image:NucleusOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NewRS
    Name the output image:NewOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:NewCentromeres
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OldRS
    Name the output image:OldOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:OldCentromeres
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

Tile:[module_num:26|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
    Select an input image:NucleusRS
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:2
    Final number of columns:3
    Image corner to begin tiling:top left
    Direction to begin tiling:column
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:NucleusOverlay
    Select an additional image to tile:NewRS
    Select an additional image to tile:NewOverlay
    Select an additional image to tile:OldRS
    Select an additional image to tile:OldOverlay

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<ImageSetName>--cp
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    Saved file format:tif
    Output file location:Elsewhere...|\\\\g<PlateFolder>--cp
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<PlateFolder>--cp
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_Nuclei,Image|Count_OldCentromeres,Image|Count_NewCentromeres,Image|FileName_New,Image|FileName_Nucleus,Image|FileName_TiledImage,Image|FileName_Old,Image|Intensity_MeanIntensity_OldMaskOutsideNuclei,Image|Intensity_MeanIntensity_NewMaskOutsideNuclei,Image|Intensity_MedianIntensity_OldMaskOutsideNuclei,Image|Intensity_MedianIntensity_NewMaskOutsideNuclei,Image|Intensity_TotalArea_OldMaskOutsideNuclei,Image|Intensity_TotalArea_NewMaskOutsideNuclei,Image|PathName_Nucleus,Image|PathName_Old,Image|PathName_TiledImage,Image|PathName_New,Image|Metadata_FileLocation,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
