CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150730192304
GitHash:375e9b2
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Row>[A-Z]{1}).*--W(?P<WellNum>.*)--P(?P<PosNum>.*)--.*--.*--.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<PlateFolder>.*)[/\\\\\\\\]data$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<ImageSetName>.*)--.*.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*[/\\\\\\\\](?P<PlateName>.*)[/\\\\\\\\]data$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (file does contain "Dapi")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy3")
    Name to assign these images:Old
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:New
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Find Nuclei, excluding clumps']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
    Select the input image:Nucleus
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Find all nuclei, only used for finding the image background later', 'this approach only works if there are no stainings outside the nuclei (e.g., would not work with the mitochondrial background)']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
    Select the input image:Nucleus
    Name the primary objects to be identified:AllNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.505
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:Nucleus
    Select objects to measure:Nuclei

DisplayDataOnImage:[module_num:8|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_StdIntensity_Nucleus
    Select the image on which to display the measurements:Nucleus
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:5
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:9|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
    Name the output objects:InterphaseNuclei
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_StdIntensity_Nucleus
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.0025

MeasureImageQuality:[module_num:10|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notes:['This measures whether the images are in focus and may also help to identify images with a blurry dirt background']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
MaskImage:[module_num:11|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notes:['measure bg intensity']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
    Select the input image:New
    Name the output image:NewMaskOutsideNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:AllNuclei
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:12|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notes:['measure bg intensity']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
    Select the image to measure:NewMaskOutsideNuclei
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:13|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notes:['subtract bg intensity']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:NewMinusBG
    Image or measurement?:Image
    Select the first image:New
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_NewMaskOutsideNuclei

MaskImage:[module_num:14|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
    Select the input image:Old
    Name the output image:OldMaskOutsideNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:AllNuclei
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:15|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notes:['measure bg intensity']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
    Select the image to measure:OldMaskOutsideNuclei
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:16|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notes:['measure bg intensity']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:OldMinusBG
    Image or measurement?:Image
    Select the first image:Old
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_OldMaskOutsideNuclei

Morph:[module_num:17|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notes:['The Scale is the centromere diameter in the image']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
    Select the input image:Old
    Name the output image:OldTophatSmall
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:6
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:18|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notes:['Find Centromeres.', 'This is a manual threshold using the Lower and Upper bounds. The Automated Per Object Method is only fake in order to exclude pixels outside Nuclei, for later visualisation.']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
    Select the input image:OldTophatSmall
    Name the primary objects to be identified:OldCentromeres
    Typical diameter of objects, in pixel units (Min,Max):2,40000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.00035
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
MaskImage:[module_num:19|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
    Select the input image:OldTophatSmall
    Name the output image:OldTophatSmallCentromereMask
    Use objects or an image as a mask?:Objects
    Select object for mask:OldCentromeres
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    Invert the mask?:No

Morph:[module_num:20|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
    Select the input image:New
    Name the output image:NewTophatSmall
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:6
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:NewTophatSmall
    Name the primary objects to be identified:NewCentromeres
    Typical diameter of objects, in pixel units (Min,Max):2,40000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.0012
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
MaskImage:[module_num:22|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
    Select the input image:NewTophatSmall
    Name the output image:NewTophatSmallCentromereMask
    Use objects or an image as a mask?:Objects
    Select object for mask:NewCentromeres
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:23|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
    Hidden:4
    Select an image to measure:OldTophatSmallCentromereMask
    Select an image to measure:OldMinusBG
    Select an image to measure:NewTophatSmallCentromereMask
    Select an image to measure:NewMinusBG
    Select objects to measure:InterphaseNuclei

RescaleIntensity:[module_num:24|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
    Select the input image:Nucleus
    Name the output image:NucleusRS
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:25|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
    Select the input image:New
    Name the output image:NewRS
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:26|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
    Select the input image:Old
    Name the output image:OldRS
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NucleusRS
    Name the output image:NucleusOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:InterphaseNuclei

OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NewRS
    Name the output image:NewOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:NewCentromeres
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:InterphaseNuclei

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OldRS
    Name the output image:OldOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:OldCentromeres
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:InterphaseNuclei

Tile:[module_num:30|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
    Select an input image:NucleusRS
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:2
    Final number of columns:3
    Image corner to begin tiling:top left
    Direction to begin tiling:column
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:NucleusOverlay
    Select an additional image to tile:NewRS
    Select an additional image to tile:NewOverlay
    Select an additional image to tile:OldRS
    Select an additional image to tile:OldOverlay

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<ImageSetName>--cp
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    Saved file format:tif
    Output file location:Elsewhere...|\\\\g<PlateFolder>--cp\\\\\\\\images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<PlateFolder>--cp\\\\\\\\tables
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_NewCentromeres,Image|Count_Nuclei,Image|Count_OldCentromeres,Image|Count_InterphaseNuclei,Image|ImageQuality_PowerLogLogSlope_Nucleus,Image|ImageQuality_PowerLogLogSlope_Old,Image|ImageQuality_PowerLogLogSlope_New,Image|Intensity_TotalArea_OldMaskOutsideNuclei,Image|Intensity_TotalArea_NewMaskOutsideNuclei,Image|Intensity_MeanIntensity_OldMaskOutsideNuclei,Image|Intensity_MeanIntensity_NewMaskOutsideNuclei,Image|Intensity_MedianIntensity_OldMaskOutsideNuclei,Image|Intensity_MedianIntensity_NewMaskOutsideNuclei,Image|PathName_Nucleus,Image|PathName_Old,Image|PathName_TiledImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\\\\g<PlateName>_Images.csv
    Use the object name for the file name?:No
