CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<ImageName>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<FullPath>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Im
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImInv
    Image or measurement?:Image
    Select the first image:Im
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:6|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
    Select the input image:ImInv
    Name the output image:ImInvTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:15
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
EnhanceEdges:[module_num:7|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notes:['This is to only get the cell bodies']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
    Select the input image:ImInvTophat
    Name the output image:ImInvTophatLog
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:No
    Gaussian's sigma value:3
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
ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.5
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:CellBodies
    Image or measurement?:Image
    Select the first image:ImInvTophatLog
    Multiply the first image by:-1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CellBodies
    Name the primary objects to be identified:CellBodies
    Typical diameter of objects, in pixel units (Min,Max):3,10000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.515
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:CellBodies
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:ImInvTophat
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.06
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
ExpandOrShrinkObjects:[module_num:11|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notes:['Only for visualisation']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
    Select the input objects:CellBodies
    Name the output objects:ShrunkenCellBodies
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
OverlayOutlines:[module_num:12|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notes:['Only for visualisation']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Im
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:#0080FF
    Load outlines from an image or objects?:Objects
    Select objects to display:ShrunkenCellBodies

Tile:[module_num:13|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notes:['Only for visualisation']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
    Select an input image:Im
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OrigOverlay

SaveImages:[module_num:14|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notes:['Only for visualisation']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<ImageName>--cp
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    Saved file format:png
    Output file location:Elsewhere...|\\\\g<FullPath>--cp
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|\\\\g<FullPath>--cp
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Count_Cells,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_ImageName,Image|Metadata_FullPath,Cells|AreaShape_Perimeter,Cells|AreaShape_FormFactor,Cells|AreaShape_Solidity,Cells|AreaShape_Orientation,Cells|AreaShape_MajorAxisLength,Cells|AreaShape_MinFeretDiameter,Cells|AreaShape_MaxFeretDiameter,Cells|AreaShape_EulerNumber,Cells|AreaShape_Eccentricity,Cells|AreaShape_Compactness,Cells|AreaShape_Extent,Cells|AreaShape_MinorAxisLength,Cells|AreaShape_MedianRadius,Cells|AreaShape_MaximumRadius,Cells|AreaShape_MeanRadius,Cells|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
