CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Filename>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<dataFolder>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^.*_(?P<FileID>.*_.*)_MCP.*_t(?P<timepoint>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "MAX")
    Name to assign these images:max
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SUM")
    Name to assign these images:sum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:dataFolder

RescaleIntensity:[module_num:5|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
    Select the input image:max
    Name the output image:maxRS
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:6|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
    Select the input image:maxRS
    Name the output image:maxRSmedian
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:16.0
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
ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:maxMinusMedian
    Image or measurement?:Image
    Select the first image:maxRS
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:maxRSmedian
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:8|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notes:['']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
    Select the input image:maxMinusMedian
    Name the primary objects to be identified:spots
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:4
    Lower and upper bounds on threshold:0.0,1.0
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:50

ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:spots
    Name the output objects:spotsDilate
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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    Retain the outlines of the identified objects?:No
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
Morph:[module_num:10|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
    Select the input image:sum
    Name the output image:sumTophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:7
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:sumTophat
    Select objects to measure:spotsDilate

TrackObjects:[module_num:12|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notes:['']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
    Choose a tracking method:LAP
    Select the objects to track:spotsDilate
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    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:spotsTracked
    Select the motion model:Both
    Number of standard deviations for search radius:3
    Search radius limit, in pixel units (Min,Max):15,15
    Run the second phase of the LAP algorithm?:No
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    Filter objects by lifetime?:No
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
RescaleIntensity:[module_num:13|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
    Select the input image:sumTophat
    Name the output image:sumTophatRS
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,30
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
RescaleIntensity:[module_num:14|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
    Select the input image:sum
    Name the output image:sumRS
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:60,130
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:sumTophatRS
    Name the output image:spotsOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#8D7288
    Load outlines from an image or objects?:Objects
    Select objects to display:spotsDilate

Tile:[module_num:16|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
    Select an input image:maxRS
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:4
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:No
    Select an additional image to tile:sumRS
    Select an additional image to tile:spotsOverlay
    Select an additional image to tile:spotsTracked

SaveImages:[module_num:17|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
    Select the type of image to save:Movie
    Select the image to save:TiledImage
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<FileID>_movie
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    Saved file format:png
    Output file location:Elsewhere...|\\\\g<dataFolder>--cp-out/\\\\g<FileID>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Saved movie format:avi

DisplayDataOnImageAndSaveAsPdf:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:spotsDilate
    Measurement to display:TrackObjects_Label
    Select the image on which to display the measurements:maxMinusMedian
    Text color:#71E01F
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Filename (full path) for saving as pdf:\\\\g<dataFolder>--cp-out/\\\\g<FileID>/\\\\g<FileID>_\\\\g<timepoint>
    Annotation offset (in pixels):0
    Display mode:Text
    Color map:Default
    Display background image?:Yes

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<dataFolder>--cp-out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:spotsDilate|Intensity_MaxIntensity_sumTophat,spotsDilate|Intensity_IntegratedIntensity_sumTophat,spotsDilate|TrackObjects_ParentObjectNumber,spotsDilate|TrackObjects_DistanceTraveled,spotsDilate|TrackObjects_Label,spotsDilate|TrackObjects_Lifetime,Image|Count_spots,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Filename,Image|Metadata_dataFolder,Image|Metadata_FileID
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:spotsDilate
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
