CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/almf/group/ALMFstuff/Tischi/projects/JaneHung_BroadInstitute/2015-11-06--imagingcardiomyocytebanding/data
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):.*2.tif$
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    Extract metadata from where?:Path
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    Type the regular expression that finds metadata in the subfolder path:(?P<RootFolder>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:myo
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):.*1.tif$
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:nuc
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    Rescale intensities?:Yes

Morph:[module_num:2|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
    Select the input image:myo
    Name the output image:DirLines
    Select the operation to perform:directionlines
    Number of times to repeat operation:Once
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    Scale:17

ImageMath:[module_num:3|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notes:["angle doubling is necessary for this kind of data as there are only orientations bewteen 0 and 180 degrees and 0=180 degress because we don't measure the directionality of the microtubules. so after the multiplication we have 0=360"]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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:2
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:DirLinesAngleDoubling
    Image or measurement?:Image
    Select the first image:DirLines
    Multiply the first image by:1
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    Image or measurement?:Image
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
Morph:[module_num:4|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
    Select the input image:myo
    Name the output image:imth
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:11

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:imth
    Name the primary objects to be identified:myo
    Typical diameter of objects, in pixel units (Min,Max):5,4000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Manual threshold:0.01
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
MaskImage:[module_num:6|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
    Select the input image:DirLinesAngleDoubling
    Name the output image:DirLinesRadiansMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:myo
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    Invert the mask?:No

Smooth:[module_num:7|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notes:['the diameter here is important as it determines the size of the region in the image in which it is measured how criss-cross the MTs are.', 'if this becomes very big, the variance should increase.', '']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
    Select the input image:DirLinesRadiansMasked
    Name the output image:AngularVariance
    Select smoothing method:Angular Variance Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:101
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
RescaleIntensity:[module_num:8|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
    Select the input image:DirLinesRadiansMasked
    Name the output image:DirLinesRadiansMaskedRS
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:myo
    Name the output image:myoRS
    Select rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:10|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
    Operation:None
    Raise the power of the result by:4
    Multiply the result by:1
    Add to result:0.1
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:AngularVarianceSquared
    Image or measurement?:Image
    Select the first image:AngularVariance
    Multiply the first image by:1
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    Image or measurement?:Image
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
ImageMath:[module_num:11|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:AngularVarianceSquaredInvert
    Image or measurement?:Image
    Select the first image:AngularVariance
    Multiply the first image by:1
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    Image or measurement?:Image
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
MaskImage:[module_num:12|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
    Select the input image:AngularVarianceSquaredInvert
    Name the output image:AngularVarianceSquaredInvertMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:myo
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    Invert the mask?:No

MeasureImageIntensity:[module_num:13|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
    Select the image to measure:AngularVariance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:myo

Tile:[module_num:14|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
    Select an input image:myoRS
    Name the output image:TiledImage
    Tile within cycles or across cycles?:Within cycles
    Number of rows in final tiled image:8
    Number of columns in final tiled image:12
    Begin tiling in which corner of the final image?:top left
    Begin tiling across a row, or down a column?:row
    Tile in meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:AngularVarianceSquaredInvertMasked

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:myo
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--AngularVariance
    Select file format to use:png
    Output file location:Elsewhere...|\\g<RootFolder>--cp_out
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
