CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150728132743
GitHash:f40fab5
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Filename>.*)--.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Root>.*)[\\\\\\\\/](?P<Treatment>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (file does contain "0000.tif")
    Name to assign these images:Golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "0001.tif")
    Name to assign these images:Dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "0002.tif")
    Name to assign these images:Eres
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Dapi
    Name the output image:DapiRS
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,2000
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DapiRS
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.02
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:ShrunkenNuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:9
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:ExpandedNuclei
    Name the output objects:ExpandedExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:9
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    Retain the outlines of the identified objects?:No
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:ExpandedExpandedNuclei
    Select the smaller identified objects:ExpandedNuclei
    Name the tertiary objects to be identified:OuterRing
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:ShrunkenNuclei
    Name the tertiary objects to be identified:InnerRing
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

RescaleIntensity:[module_num:12|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
    Select the input image:Eres
    Name the output image:EresRs
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,2000
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
Smooth:[module_num:13|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
    Select the input image:EresRs
    Name the output image:EresRsSmooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7
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
ApplyThreshold:[module_num:14|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
    Select the input image:EresRsSmooth
    Name the output image:CellsBw
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.02
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Eres
    Name the output image:EresOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:OuterRing
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:InnerRing

MaskImage:[module_num:16|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
    Select the input image:Eres
    Name the output image:EresMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:CellsBw
    Invert the mask?:No

MeasureObjectIntensity:[module_num:17|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
    Hidden:1
    Select an image to measure:EresMasked
    Select objects to measure:OuterRing
    Select objects to measure:InnerRing

CalculateMath:[module_num:18|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
    Name the output measurement:RingRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:InnerRing
    Select the numerator measurement:Intensity_MeanIntensity_EresMasked
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:OuterRing
    Select the denominator measurement:Intensity_MeanIntensity_EresMasked
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:OuterRing
    Measurement to display:Math_RingRatio
    Select the image on which to display the measurements:Eres
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:EresOverlay
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Filename>--overlay
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    Saved file format:png
    Output file location:Elsewhere...|\\\\g<Root>--cp/\\\\g<Treatment>/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_Nuclei,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Filename,Image|Metadata_Treatment,Image|Metadata_Root,OuterRing|Math_RingRatio
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:OuterRing
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
