CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150910190903
GitHash:207f5bf
ModuleCount:37
HasImagePlaneDetails:False

LoadImages:[module_num:1|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notes:['!Change the input directory (input image file location). Check if channels correspond to the order of the images']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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|Y:\\\\jjung\\\\output-jjung\\\\Cytoskeleton_LabTek01_batch1_02
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):.*--C01.ome.tif$
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<plate>.*)--(?P<siRNA>.*)--(?P<gene>.*)--W(?P<wellNum>.*)--P(?P<posNum>.*)--.*--.*--.*$
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:nucleus
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):.*--C03.ome.tif$
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<ImageBaseName>.*)[-][-].*[.].*$
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:TOTALraw
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):.*--C02.ome.tif$
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    Extract metadata from where?:Path
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    Type the regular expression that finds metadata in the subfolder path:(?P<rootpath>.*)[\\\\\\\\/].*[\\\\\\\\/](?P<platepath>.*)[\\\\\\\\/](?P<wellfolder>.*)[\\\\\\\\/](?P<posfolder>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:PMraw
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    Rescale intensities?:Yes

RescaleIntensity:[module_num:2|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notes:['The images are loaded as 16bit (max=65535) but the ScanR CCD is only 12bit (max=4095). In order ']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
    Select the input image:PMraw
    Name the output image:PM
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
    Intensity range for the output image:0.0,1.0
    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
RescaleIntensity:[module_num:3|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
    Select the input image:TOTALraw
    Name the output image:TOTAL
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
    Intensity range for the output image:0.0,1.0
    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
IdentifyPrimaryObjects:[module_num:4|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notes:['here we keep all nuclei (we will filter the bad ones later...)', 'identify nuclei', 'separate nuclei']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
    Select the input image:nucleus
    Name the primary objects to be identified:nucleus_all
    Typical diameter of objects, in pixel units (Min,Max):10,1000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:5|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notes:['those cells are only needed in order to get a mask for the background image.', 'make the expansion rather generous in order to make sure that all pixels outside cells are background', 'here, the boundary cells are not discarded.', '']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
    Select the input objects:nucleus_all
    Name the objects to be identified:cell_all
    Select the method to identify the secondary objects:Distance - N
    Select the input image:TOTAL
    Number of pixels by which to expand the primary objects:70
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureImageQuality:[module_num:6|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:nucleus
    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
ImageMath:[module_num:7|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notes:['! subtract a constant background', 'check for view different images how different the value after ajustion is (if there is the value 0 in the end)']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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:-0.002
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:TOTAL_bgCorr
    Image or measurement?:Image
    Select the first image:TOTAL
    Multiply the first image by:1
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    Image or measurement?:Image
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
ImageMath:[module_num:8|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notes:['! adapt background substraction with the value from measure image intensity']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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:-0.002
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:PM_bgCorr
    Image or measurement?:Image
    Select the first image:PM
    Multiply the first image by:1
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    Image or measurement?:Image
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
Crop:[module_num:9|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
    Select the input image:PM_bgCorr
    Name the output image:PM_bgCorr_crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:70,-70
    Top and bottom rectangle positions:70,-70
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    Remove empty rows and columns?:No
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
Crop:[module_num:10|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
    Select the input image:TOTAL_bgCorr
    Name the output image:TOTAL_bgCorr_crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:70,-70
    Top and bottom rectangle positions:70,-70
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    Remove empty rows and columns?:No
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
MaskImage:[module_num:11|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notes:['prepare image to measure bg intensity']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
    Select the input image:TOTAL_bgCorr_crop
    Name the output image:TOTAL_bgCorr_bgMask
    Use objects or an image as a mask?:Objects
    Select object for mask:cell_all
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    Invert the mask?:Yes

MaskImage:[module_num:12|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notes:['prepare image to measure bg intensity']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
    Select the input image:PM_bgCorr_crop
    Name the output image:PM_bgCorr_bgMask
    Use objects or an image as a mask?:Objects
    Select object for mask:cell_all
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:13|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notes:['take the backgound values from here']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
    Select the image to measure:PM_bgCorr_bgMask
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:TOTAL_bgCorr_bgMask
    Measure the intensity only from areas enclosed by objects?:No
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
IdentifySecondaryObjects:[module_num:14|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notes:['! adapt the cell size ', "cells touching the image border are discarded. this leaves the 'central' cells"]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
    Select the input objects:nucleus_all
    Name the objects to be identified:cell_central
    Select the method to identify the secondary objects:Distance - N
    Select the input image:PM_bgCorr
    Number of pixels by which to expand the primary objects:70
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:nucleus_central
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
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
MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:nucleus_central
    Calculate the Zernike features?:No

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:nucleus_central
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:nucleus
    Text color:y
    Name the output image that has the measurements displayed:displayDataOnImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:nucleus_central
    Measurement to display:AreaShape_Eccentricity
    Select the image on which to display the measurements:nucleus
    Text color:y
    Name the output image that has the measurements displayed:displayDataOnImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:18|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notes:['filter nuclei by size and shape']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
    Name the output objects:nucleus_filterNucShape
    Select the object to filter:nucleus_central
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:1
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200.0
    Filter using a maximum measurement value?:Yes
    Maximum value:10000.0
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.87
    Select additional object to relabel:cell_central
    Name the relabeled objects:cell_filterNucShape
    Retain outlines of relabeled objects?:No
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
ApplyThreshold:[module_num:19|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notes:['saturation:', 'detect saturated pixels (this module sets all pixels to zero that are below the "Manual threshold")', '16bit=2^16-1=65535; 12bit=2^12-1=4095', 'thus, if you scale from 0 to 1 the maximal gray value of a 12bit image in a 16bit scale is 4095/65535=0.06248 (4094/65535=0.06247)']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
    Select the input image:PM
    Name the output image:PM_saturated
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.998
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
ImageMath:[module_num:20|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notes:['saturation:', 'sets the value of saturated pixels to 1 (the trick is to make all non-zero pixels have a really big value and then set ot 1 by checking "Set values greater than 1 equal to 1")']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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:PM_saturated_bw
    Image or measurement?:Image
    :PM_saturated
    :100000000000000000
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    Image or measurement?:Image
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    :1
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
ApplyThreshold:[module_num:21|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notes:['saturation:']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
    Select the input image:TOTAL
    Name the output image:TOTAL_saturated
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.998
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
ImageMath:[module_num:22|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notes:['saturation:']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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:TOTAL_saturated_bw
    Image or measurement?:Image
    :TOTAL_saturated
    :100000000000000000
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    Image or measurement?:Image
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    :1
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
MeasureObjectIntensity:[module_num:23|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
    Hidden:3
    Select an image to measure:TOTAL_bgCorr
    Select an image to measure:TOTAL_saturated_bw
    Select an image to measure:PM_saturated_bw
    Select objects to measure:cell_filterNucShape

DisplayDataOnImage:[module_num:24|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notes:['displays the integrated Total CFTR signal for the user to find a threshold value for too low expressing cells (to be entered in the next "FilterObjects" module)']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
    Display object or image measurements?:Object
    Select the input objects:cell_filterNucShape
    Measurement to display:Intensity_IntegratedIntensity_TOTAL_bgCorr
    Select the image on which to display the measurements:TOTAL_bgCorr
    Text color:y
    Name the output image that has the measurements displayed:displayDataOnImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:25|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notes:['! filter for too low total expression (check on image before)', '! filter too many saturated pixels (e.g. 1% of typical cell area can be saturated)']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
    Name the output objects:cell_final
    Select the object to filter:cell_filterNucShape
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:cell_final_outline
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    Measurement count:3
    Additional object count:1
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    Select the measurement to filter by:Intensity_IntegratedIntensity_TOTAL_bgCorr
    Filter using a minimum measurement value?:Yes
    Minimum value:150
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_PM_saturated_bw
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:10
    Select the measurement to filter by:Intensity_IntegratedIntensity_TOTAL_saturated_bw
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:10
    Select additional object to relabel:nucleus_filterNucShape
    Name the relabeled objects:nucleus_final
    Retain outlines of relabeled objects?:Yes
    Name the outline image:nucleus_final_outline

MeasureObjectIntensity:[module_num:26|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
    Hidden:2
    Select an image to measure:TOTAL_bgCorr
    Select an image to measure:PM_bgCorr
    Select objects to measure:cell_final

CalculateMath:[module_num:27|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
    Name the output measurement:ratio
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:cell_final
    Select the first operand measurement:Intensity_IntegratedIntensity_PM_bgCorr
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the second operand measurement type:Object
    Select the second operand objects:cell_final
    Select the second operand measurement:Intensity_IntegratedIntensity_TOTAL_bgCorr
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:Yes
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    Name the output image:nucleus_cell_final_outline
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1.0
    Select outlines to display:nucleus_final_outline
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    Load outlines from an image or objects?:Image
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    Select outlines to display:cell_final_outline
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    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:nucleus_cell_final_outline
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<ImageBaseName>--outlines
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<rootpath>/output--cp/\\\\g<platepath>/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ImageMath:[module_num:30|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notes:['this just generates a black image (used as a black background for the score image)']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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:blank
    Image or measurement?:Image
    :nucleus
    :1
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    Image or measurement?:Image
    :nucleus
    :1
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
DisplayDataOnImage:[module_num:31|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
    Display object or image measurements?:Object
    Select the input objects:cell_final
    Measurement to display:Math_ratio
    Select the image on which to display the measurements:blank
    Text color:white
    Name the output image that has the measurements displayed:score
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:32|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
    Display object or image measurements?:Object
    Select the input objects:cell_final
    Measurement to display:Intensity_IntegratedIntensity_PM_bgCorr
    Select the image on which to display the measurements:PM_bgCorr
    Text color:white
    Name the output image that has the measurements displayed:score
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:33|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
    Display object or image measurements?:Object
    Select the input objects:cell_final
    Measurement to display:Intensity_IntegratedIntensity_TOTAL_bgCorr
    Select the image on which to display the measurements:TOTAL_bgCorr
    Text color:white
    Name the output image that has the measurements displayed:score
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
MeasureObjectSizeShape:[module_num:34|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
    Select objects to measure:nucleus_final
    Calculate the Zernike features?:No

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:score
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<ImageBaseName>--score
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    Saved file format:tiff
    Output file location:Elsewhere...|\\\\g<rootpath>/output--cp/\\\\g<platepath>/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:36|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<rootpath>/output--cp/\\\\g<platepath>/tables
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_cell_all,Image|Count_cell_final,Image|ImageQuality_PowerLogLogSlope_nucleus,Image|Intensity_TotalArea_TOTAL_bgCorr_bgMask,Image|Intensity_TotalArea_PM_bgCorr_bgMask,Image|Intensity_MedianIntensity_TOTAL_bgCorr_bgMask,Image|Intensity_MedianIntensity_PM_bgCorr_bgMask,Image|PathName_score,Image|PathName_nucleus_cell_final_outline,Image|FileName_nucleus_cell_final_outline,Image|FileName_score,Image|Metadata_posNum,Image|Metadata_platepath,Image|Metadata_plate,Image|Metadata_ImageBaseName,Image|Metadata_rootpath,Image|Metadata_wellfolder,Image|Metadata_wellNum,Image|Metadata_gene,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cell_final
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:37|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
