CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/almfscreen/tischer/mariana_faria--1stScreen--Reanalyse--2015/data
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:4
    Text that these images have in common (case-sensitive):C01
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:^(?P<dum5>.*)--(?P<siRNA>.*)--(?P<gene>.*)--W(?P<WellNum>.*)--P(?P<PosNum>.*)--T.*
    Type the regular expression that finds metadata in the subfolder path:.*[\\\\/](?P<PlateName>.*)[\\\\/](?P<dum3>.*)[\\\\/](?P<dum4>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DNA
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):C02
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:^(?P<dum1>.*)--(?P<siRNA_gene>.*--.*)--W.*
    Type the regular expression that finds metadata in the subfolder path:(?P<pathBase>.*)[\\\\/](?P<pathPlate>.*)[\\\\/](?P<pathWell>.*)[\\\\/](?P<pathPos>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Centrin
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):C03
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<ImageBaseName>.*)--T.*
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:CEP135
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):C04
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Cellmask
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    Rescale intensities?:Yes

ImageMath:[module_num:2|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notes:['here a fixed background is subtracted from the image']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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:-0.00178
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:Centrin-BGcorr
    Image or measurement?:Image
    Select the first image:Centrin
    Multiply the first image by:1
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    Image or measurement?:Image
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
ImageMath:[module_num:3|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notes:['here a fixed background is subtracted from the image']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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:-0.00251
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:CEP135-BGcorr
    Image or measurement?:Image
    Select the first image:CEP135
    Multiply the first image by:1
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:4|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
    Select the image to measure:CEP135
    Measure the intensity only from areas enclosed by objects?:No
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
Smooth:[module_num:5|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
    Select the input image:DNA
    Name the output image:DNA-smooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:8
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
IdentifyPrimaryObjects:[module_num:6|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notes:['# 2015-01-14: changed Typical diameter Min from 30 to 25 to keep more of the elongated (small) cells', '']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
    Select the input image:DNA
    Name the primary objects to be identified:NucleiTmpTmp
    Typical diameter of objects, in pixel units (Min,Max):25,10000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0025,1.0
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureImageQuality:[module_num:7|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:CEP135,Centrin,DNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Window size for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
Smooth:[module_num:8|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
    Select the input image:Cellmask
    Name the output image:CellMask-smoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:15
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:NucleiTmpTmp
    Name the objects to be identified:CellsTmp
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CellMask-smoothed
    Select the thresholding method:Otsu Global
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.000000,1.000000
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    Retain outlines of the identified secondary objects?:No
    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Discard secondary objects that touch the edge of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:NucleiTmp
    Retain outlines of the new primary objects?:Yes
    Name the new primary object outlines:NucleiTmpOutlines
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    Fill holes in identified objects?:Yes

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:NucleiTmp
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:NucleiTmp

DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:NucleiTmp
    Measurement to display:AreaShape_MinorAxisLength
    Select the image on which to display the measurements:DNA
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

CalculateMath:[module_num:13|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notes:['measure how variable the nucleus signal is (in order to filter out weird nuclei)']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
    Name the output measurement:CV-DNA
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:NucleiTmp
    Select the numerator measurement:Intensity_StdIntensity_DNA
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:NucleiTmp
    Select the denominator measurement:Intensity_MeanIntensity_DNA
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:NucleiTmp
    Measurement to display:Math_CV-DNA
    Select the image on which to display the measurements:DNA
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:3
    Image elements to save:Image

FilterObjects:[module_num:15|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notes:['fiter weird nuclei, based on shape and on intensity variations (CV).', 'CV=0.5 for MolDev', '']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
    Name the output objects:Nuclei
    Select the object to filter:NucleiTmp
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:Nuclei-outlines
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    Measurement count:2
    Additional object count:1
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:30.0
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_CV-DNA
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5
    Select additional object to relabel:CellsTmp
    Name the relabeled objects:Cells
    Retain outlines of relabeled objects?:Yes
    Name the outline image:Cells-outlines

EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:CEP135
    Name the output image:CEP135-Tophat
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:Centrin
    Name the output image:Centrin-Tophat
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
Crop:[module_num:18|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
    Select the input image:CEP135-Tophat
    Name the output image:CEP135-Tophat-CellCrop
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:Cells

Crop:[module_num:19|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
    Select the input image:Centrin-Tophat
    Name the output image:Cetrin-Tophat-CellCrop
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:Cells

IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:CEP135-Tophat-CellCrop
    Name the primary objects to be identified:CEP135
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RobustBackground PerObject
    Threshold correction factor:4
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Name the outline image:CEP135-outlines
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:Cetrin-Tophat-CellCrop
    Name the primary objects to be identified:Centrin
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RobustBackground PerObject
    Threshold correction factor:3
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Name the outline image:Centrin-outlines
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
ConvertObjectsToImage:[module_num:22|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
    Select the input objects:Centrin
    Name the output image:Centrin-bw
    Select the color type:Binary (black & white)
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:CEP135
    Name the output image:CEP135-bw
    Select the color type:Binary (black & white)
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
ImageMath:[module_num:24|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
    Operation:Add
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:CepPlusCentBW
    Image or measurement?:Image
    Select the first image:CEP135-bw
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:Centrin-bw
    Multiply the second image by:1
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
IdentifyPrimaryObjects:[module_num:25|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
    Select the input image:CepPlusCentBW
    Name the primary objects to be identified:CentrosomeTmp
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Yes
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectIntensity:[module_num:26|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
    Hidden:1
    Select an image to measure:CepPlusCentBW
    Select objects to measure:CentrosomeTmp

FilterObjects:[module_num:27|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
    Name the output objects:Centrosome
    Select the object to filter:CentrosomeTmp
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:Centrosome-outlines
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:Intensity_MaxIntensity_CepPlusCentBW
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:No
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
RescaleIntensity:[module_num:28|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
    Select the input image:CEP135
    Name the output image:CEP135-RS
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:29|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
    Select the input image:Centrin
    Name the output image:Centrin-RS
    Select rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:30|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
    Select the input image:DNA
    Name the output image:DNA-RS
    Select rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:31|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
    Select a color scheme:RGB
    Select the input image to be colored red:CEP135-RS
    Select the input image to be colored green:Centrin-RS
    Select the input image to be colored blue:DNA-RS
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
ExpandOrShrinkObjects:[module_num:32|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
    Select the input objects:Centrosome
    Name the output objects:CentrosomeDilated
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the outline image:CentrosomeDilated-Outlines

OverlayOutlines:[module_num:33|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notes:['overlay outlines on color image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:ColorOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:Cells-outlines
    Select outline color:Red
    Select outlines to display:Centrosome-outlines
    Select outline color:White
    Select outlines to display:Nuclei-outlines
    Select outline color:Blue

CalculateMath:[module_num:34|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
    Name the output measurement:fractionNormalNuclei
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_Nuclei
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_NucleiTmp
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

OverlayOutlines:[module_num:35|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA-RS
    Name the output image:DNAOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucleiTmpOutlines
    Select outline color:Blue
    Select outlines to display:Nuclei-outlines
    Select outline color:Green

OverlayOutlines:[module_num:36|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA-RS
    Name the output image:DNAOverlapTest
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucleiTmpOutlines
    Select outline color:Blue

OverlayOutlines:[module_num:37|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA-RS
    Name the output image:DNAOverlayTestTest
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:Nuclei-outlines
    Select outline color:Green

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
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    Select method for constructing file names:Single name
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    Enter single file name:\\g<ImageBaseName>--RBG
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    Select file format to use:png
    Output file location:Elsewhere...|\\g<pathBase>--cp/\\g<pathPlate>--cp/content/
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:ColorOverlay
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    Select method for constructing file names:Single name
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    Enter single file name:\\g<ImageBaseName>--RBGO
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    Select file format to use:png
    Output file location:Elsewhere...|\\g<pathBase>--cp/\\g<pathPlate>--cp/content/
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:DNAOverlay
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    Select method for constructing file names:Single name
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    Enter single file name:\\g<ImageBaseName>--NucO
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    Select file format to use:png
    Output file location:Elsewhere...|\\g<pathBase>--cp/\\g<pathPlate>--cp/content/
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

ConvertObjectsToImage:[module_num:41|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
    Select the input objects:Centrosome
    Name the output image:CentrosomeBW
    Select the color type:Binary (black & white)
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
ImageMath:[module_num:42|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
    Operation:Multiply
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:CEP135-Tophat-CentroBW
    Image or measurement?:Image
    Select the first image:CEP135-Tophat
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:CentrosomeBW
    Multiply the second image by:1
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    Image or measurement?:Image
    Select the third image:CEP135-bw
    Multiply the third image by:1
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
ImageMath:[module_num:43|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
    Operation:Multiply
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Centrin-Tophat-CentroBW
    Image or measurement?:Image
    Select the first image:Centrin-Tophat
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:CentrosomeBW
    Multiply the second image by:1
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    Image or measurement?:Image
    Select the third image:Centrin-bw
    Multiply the third image by:1
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
RelateObjects:[module_num:44|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
    Select the input child objects:Centrosome
    Select the input parent objects:Cells
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
FilterObjects:[module_num:45|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
    Name the output objects:CentroCells
    Select the object to filter:Cells
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:Children_Centrosome_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:46|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
    Hidden:4
    Select an image to measure:CEP135-Tophat-CentroBW
    Select an image to measure:Centrin-Tophat-CentroBW
    Select an image to measure:CEP135-BGcorr
    Select an image to measure:Centrin-BGcorr
    Select objects to measure:CentroCells
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:47|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
    Select objects to measure:CentroCells
    Calculate the Zernike features?:No

CalculateMath:[module_num:48|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notes:['Compute ratio of total Centrin signal in centrosome and the mean Centrin intensity of the cell', '']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
    Name the output measurement:CentrinNorm
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CentroCells
    Select the numerator measurement:Intensity_IntegratedIntensity_Centrin-Tophat-CentroBW
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CentroCells
    Select the denominator measurement:Intensity_MeanIntensity_Centrin-BGcorr
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:49|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notes:['Compute ratio of total CEP135 signal in centrosome and the mean CEP135 intensity of the cell']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
    Name the output measurement:CEP135norm
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CentroCells
    Select the numerator measurement:Intensity_IntegratedIntensity_CEP135-Tophat-CentroBW
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CentroCells
    Select the denominator measurement:Intensity_MeanIntensity_CEP135-BGcorr
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:50|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
    Name the output measurement:CentrinNormTot
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CentroCells
    Select the numerator measurement:Intensity_IntegratedIntensity_Centrin-Tophat-CentroBW
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CentroCells
    Select the denominator measurement:Intensity_IntegratedIntensity_Centrin-BGcorr
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:51|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
    Name the output measurement:CEP135normTot
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CentroCells
    Select the numerator measurement:Intensity_IntegratedIntensity_CEP135-Tophat-CentroBW
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CentroCells
    Select the denominator measurement:Intensity_IntegratedIntensity_CEP135-BGcorr
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:52|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notes:['divide the normalised total signals in the centrosomal regions']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
    Name the output measurement:CentrinDivCEP135
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CentroCells
    Select the numerator measurement:Math_CentrinNorm
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CentroCells
    Select the denominator measurement:Math_CEP135norm
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:53|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
    Name the output measurement:CentrinDivCEP135normTot
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CentroCells
    Select the numerator measurement:Math_CentrinNormTot
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CentroCells
    Select the denominator measurement:Math_CEP135normTot
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

DisplayDataOnImage:[module_num:54|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
    Display object or image measurements?:Object
    Select the input objects:CentroCells
    Measurement to display:Math_CentrinDivCEP135
    Select the image on which to display the measurements:Centrin-RS
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

DisplayDataOnImage:[module_num:55|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Children_Centrosome_Count
    Select the image on which to display the measurements:Cells-outlines
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image

ExportToSpreadsheet:[module_num:56|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\g<pathBase>--cp/\\g<pathPlate>--cp/content/\\g<pathWell>/\\g<pathPos>
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Cells|Children_Centrosome_Count,Image|Count_CentroCells,Image|Count_Nuclei,Image|Count_Cells,Image|Count_NucleiTmp,Image|ImageQuality_PowerLogLogSlope_DNA,Image|ImageQuality_PowerLogLogSlope_Centrin,Image|ImageQuality_PowerLogLogSlope_CEP135,Image|FileName_ColorOverlay,Image|FileName_DNA,Image|FileName_Cellmask,Image|FileName_Centrin,Image|FileName_CEP135,Image|FileName_DNAOverlay,Image|FileName_ColorImage,Image|PathName_ColorOverlay,Image|PathName_DNA,Image|PathName_Cellmask,Image|PathName_Centrin,Image|PathName_CEP135,Image|PathName_DNAOverlay,Image|PathName_ColorImage,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
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image.csv
    Use the object name for the file name?:No

CreateBatchFiles:[module_num:57|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
    Store batch files in default output folder?:No
    Output folder path:/g/almfscreen/tischer/mariana_faria--1stScreen--Reanalyse--2015/
    Are the cluster computers running Windows?:No
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    Local root path:/home/tischer
    Cluster root path:/home/tischer
