CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Elsewhere...|/g/gavin/projects/Liposome_screen/15-09-23_run1847to1850
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:13
    Text that these images have in common (case-sensitive):Cy5_3ms.ome.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<plateName>.*)_(?P<plateRepl>.*)--(?P<lipid>.*)--(?P<protein>.*)--W(?P<wellNum>.*)--P(?P<pos>.*)--T(?P<time>.*)--(?P<z>.*)--(?P<channel>.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:lipid_raw_3ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_1ms.ome.tif
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    Extract metadata from where?:Path
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    Type the regular expression that finds metadata in the subfolder path:(?P<rootPath>.*)[\\\\/](?P<runPath>.*)[\\\\/](?P<wellPath>.*)[\\\\/](?P<posPath>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_1ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_5ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_5ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_10ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_10ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_30ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_30ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_50ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_50ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_75ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_75ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_100ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_100ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_200ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_200ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_300ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_300ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_1000ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_1000ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_2000ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_2000ms
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):gfp_4000ms.ome.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:protein_raw_4000ms
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    Rescale intensities?:Yes

RescaleIntensity:[module_num:2|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notes:[u'convert scanR gray range...to 0...1', '']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
    Select the input image:lipid_raw_3ms
    Name the output image:lipid_3ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:3|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
    Select the input image:protein_raw_1ms
    Name the output image:protein_1ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:4|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
    Select the input image:protein_raw_5ms
    Name the output image:protein_5ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:5|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
    Select the input image:protein_raw_10ms
    Name the output image:protein_10ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:6|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
    Select the input image:protein_raw_30ms
    Name the output image:protein_30ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:7|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
    Select the input image:protein_raw_50ms
    Name the output image:protein_50ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:8|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
    Select the input image:protein_raw_75ms
    Name the output image:protein_75ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:9|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
    Select the input image:protein_raw_100ms
    Name the output image:protein_100ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:10|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
    Select the input image:protein_raw_200ms
    Name the output image:protein_200ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:11|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
    Select the input image:protein_raw_300ms
    Name the output image:protein_300ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:12|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
    Select the input image:protein_raw_1000ms
    Name the output image:protein_1000ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:13|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
    Select the input image:protein_raw_2000ms
    Name the output image:protein_2000ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
RescaleIntensity:[module_num:14|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
    Select the input image:protein_raw_4000ms
    Name the output image:protein_4000ms
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,0.0625
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
Smooth:[module_num:15|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
    Select the input image:lipid_3ms
    Name the output image:lipid_3 ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:16|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
    Select the input image:protein_1ms
    Name the output image:protein_1ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:17|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
    Select the input image:protein_5ms
    Name the output image:protein_5ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:18|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
    Select the input image:protein_10ms
    Name the output image:protein_10ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:19|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
    Select the input image:protein_30ms
    Name the output image:protein_30ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:20|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
    Select the input image:protein_50ms
    Name the output image:protein_50ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:21|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
    Select the input image:protein_75ms
    Name the output image:protein_75ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:22|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
    Select the input image:protein_100ms
    Name the output image:protein_100ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:23|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
    Select the input image:protein_200ms
    Name the output image:protein_200ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:24|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
    Select the input image:protein_300ms
    Name the output image:protein_300ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:25|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
    Select the input image:protein_1000ms
    Name the output image:protein_1000ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:26|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
    Select the input image:protein_2000ms
    Name the output image:protein_2000ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
Smooth:[module_num:27|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
    Select the input image:protein_4000ms
    Name the output image:protein_4000ms_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:3
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
MeasureImageQuality:[module_num:28|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
    Window size for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
Morph:[module_num:29|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
    Select the input image:lipid_3 ms_smooth
    Name the output image:lipid_3ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:30|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
    Select the input image:protein_1ms_smooth
    Name the output image:protein_1ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:31|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
    Select the input image:protein_5ms_smooth
    Name the output image:protein_5ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:32|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
    Select the input image:protein_10ms_smooth
    Name the output image:protein_10ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:33|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
    Select the input image:protein_30ms_smooth
    Name the output image:protein_30ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:34|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
    Select the input image:protein_50ms_smooth
    Name the output image:protein_50ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:35|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
    Select the input image:protein_75ms_smooth
    Name the output image:protein_75ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:36|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
    Select the input image:protein_100ms_smooth
    Name the output image:protein_100ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:37|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
    Select the input image:protein_200ms_smooth
    Name the output image:protein_200ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:38|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
    Select the input image:protein_300ms_smooth
    Name the output image:protein_300ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:39|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
    Select the input image:protein_1000ms_smooth
    Name the output image:protein_1000ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:40|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
    Select the input image:protein_2000ms_smooth
    Name the output image:protein_2000ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:41|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
    Select the input image:protein_4000ms_smooth
    Name the output image:protein_4000ms_tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:5

ApplyThreshold:[module_num:42|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
    Select the input image:lipid_3 ms_smooth
    Name the output image:lipid_3ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:43|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
    Select the input image:protein_1ms_smooth
    Name the output image:protein_1ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:44|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
    Select the input image:protein_5ms_smooth
    Name the output image:protein_5ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:45|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
    Select the input image:protein_10ms_smooth
    Name the output image:protein_10ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:46|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
    Select the input image:protein_30ms_smooth
    Name the output image:protein_30ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:47|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
    Select the input image:protein_50ms_smooth
    Name the output image:protein_50ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:48|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
    Select the input image:protein_75ms_smooth
    Name the output image:protein_75ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:49|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
    Select the input image:protein_100ms_smooth
    Name the output image:protein_100ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:50|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
    Select the input image:protein_200ms_smooth
    Name the output image:protein_200ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:51|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
    Select the input image:protein_300ms_smooth
    Name the output image:protein_300ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:52|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
    Select the input image:protein_1000ms_smooth
    Name the output image:protein_1000ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:53|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
    Select the input image:protein_2000ms_smooth
    Name the output image:protein_2000ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:54|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
    Select the input image:protein_4000ms_smooth
    Name the output image:protein_4000ms_saturated
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.999
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
ApplyThreshold:[module_num:55|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_tophat_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.000000,1.000000
    Threshold correction factor:1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:56|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
    Select the input image:lipid_3ms_tophat_bw
    Name the primary objects to be identified:boundaries
    Typical diameter of objects, in pixel units (Min,Max):7,10000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
ConvertObjectsToImage:[module_num:57|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
    Select the input objects:boundaries
    Name the output image:boundaries
    Select the color type:Binary (black & white)
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
Morph:[module_num:58|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
    Select the input image:boundaries
    Name the output image:boundariesClosed
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:5

Morph:[module_num:59|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
    Select the input image:boundariesClosed
    Name the output image:boundariesClosedDilate
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Scale:3

ImageMath:[module_num:60|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:boundariesClosedDilateInv
    Image or measurement?:Image
    Select the first image:boundariesClosedDilate
    Multiply the first image by:1
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:61|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
    Select the input image:boundariesClosedDilateInv
    Name the primary objects to be identified:liposomes
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Name the outline image:liposomeOutlines
    Fill holes in identified objects?:No
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    Manual threshold:0.5
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
ExpandOrShrinkObjects:[module_num:62|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
    Select the input objects:liposomes
    Name the output objects:liposomeCenters
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the outline image:liposomeCenterOutlines

OverlayOutlines:[module_num:63|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lipid_3ms
    Name the output image:lipid_3ms_liposomCenter
    Select outline display mode:Color
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    Width of outlines:7
    Select outlines to display:liposomeCenterOutlines
    Select outline color:Yellow

MeasureImageIntensity:[module_num:64|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notes:[u'total integrated intensity of these BW (0/1) images give you the number of saturated pixels']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
    Select the image to measure:lipid_3ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_5ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_10ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_30ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_100ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_1ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_50ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_75ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_200ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_300ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_1000ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_2000ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_4000ms_saturated
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:65|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notes:[u'combine the saturated regions']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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_1_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_1ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:66|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_5_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_5ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:67|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_10_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_10ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:68|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_30_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_30ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:69|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_50_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_50ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:70|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_75_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_75ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:71|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_100_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_100ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:72|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_200_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_200ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:73|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_300_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_300ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:74|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_1000_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_1000ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:75|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_2000_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_2000ms_saturated
    Multiply the second image by:1
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
ImageMath:[module_num:76|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:3_4000_saturation
    Image or measurement?:Image
    Select the first image:lipid_3ms_saturated
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:protein_4000ms
    Multiply the second image by:1
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
MaskImage:[module_num:77|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_1ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_1_saturation
    Invert the mask?:Yes

MaskImage:[module_num:78|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_5ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_5_saturation
    Invert the mask?:Yes

MaskImage:[module_num:79|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_10ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_10_saturation
    Invert the mask?:Yes

MaskImage:[module_num:80|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_30ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_30_saturation
    Invert the mask?:Yes

MaskImage:[module_num:81|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_50ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_50_saturation
    Invert the mask?:Yes

MaskImage:[module_num:82|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_75ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_75_saturation
    Invert the mask?:Yes

MaskImage:[module_num:83|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_100ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_100_saturation
    Invert the mask?:Yes

MaskImage:[module_num:84|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_200ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_200_saturation
    Invert the mask?:Yes

MaskImage:[module_num:85|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_300ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_300_saturation
    Invert the mask?:Yes

MaskImage:[module_num:86|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_1000ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_1000_saturation
    Invert the mask?:Yes

MaskImage:[module_num:87|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_2000ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_2000_saturation
    Invert the mask?:Yes

MaskImage:[module_num:88|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
    Select the input image:lipid_3ms_tophat
    Name the output image:lipid_3ms_4000ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_4000_saturation
    Invert the mask?:Yes

MaskImage:[module_num:89|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
    Select the input image:protein_1ms_tophat
    Name the output image:protein_3ms_1ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_1_saturation
    Invert the mask?:Yes

MaskImage:[module_num:90|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
    Select the input image:protein_5ms_tophat
    Name the output image:protein_3ms_5ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_5_saturation
    Invert the mask?:Yes

MaskImage:[module_num:91|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
    Select the input image:protein_10ms_tophat
    Name the output image:protein_3ms_10ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_10_saturation
    Invert the mask?:Yes

MaskImage:[module_num:92|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
    Select the input image:protein_30ms_tophat
    Name the output image:protein_3ms_30ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_30_saturation
    Invert the mask?:Yes

MaskImage:[module_num:93|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
    Select the input image:protein_50ms_tophat
    Name the output image:protein_3ms_50ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_50_saturation
    Invert the mask?:Yes

MaskImage:[module_num:94|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
    Select the input image:protein_75ms_tophat
    Name the output image:protein_3ms_75ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_75_saturation
    Invert the mask?:Yes

MaskImage:[module_num:95|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
    Select the input image:protein_100ms_tophat
    Name the output image:protein_3ms_100ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_100_saturation
    Invert the mask?:Yes

MaskImage:[module_num:96|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
    Select the input image:protein_200ms_tophat
    Name the output image:protein_3ms_200ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_200_saturation
    Invert the mask?:Yes

MaskImage:[module_num:97|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
    Select the input image:protein_300ms_tophat
    Name the output image:protein_3ms_300ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_300_saturation
    Invert the mask?:Yes

MaskImage:[module_num:98|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
    Select the input image:protein_1000ms_tophat
    Name the output image:protein_3ms_1000ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_1000_saturation
    Invert the mask?:Yes

MaskImage:[module_num:99|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
    Select the input image:protein_2000ms_tophat
    Name the output image:protein_3ms_2000ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_2000_saturation
    Invert the mask?:Yes

MaskImage:[module_num:100|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
    Select the input image:protein_4000ms_tophat
    Name the output image:protein_3ms_4000ms_tophat_noSatu
    Use objects or an image as a mask?:Image
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    Select image for mask:3_4000_saturation
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:101|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
    Select the input image:lipid_3ms_tophat
    Name the primary objects to be identified:membranes
    Typical diameter of objects, in pixel units (Min,Max):5,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RobustBackground Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Name the outline image:membrane_outlines
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
ConvertObjectsToImage:[module_num:102|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
    Select the input objects:membranes
    Name the output image:mask_membranes
    Select the color type:Color
    Select the colormap:gray

MaskImage:[module_num:103|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
    Select the input image:lipid_3ms_1ms_tophat_noSatu
    Name the output image:lipid_3ms_1ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:104|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
    Select the input image:lipid_3ms_5ms_tophat_noSatu
    Name the output image:lipid_3ms_5ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:105|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
    Select the input image:lipid_3ms_10ms_tophat_noSatu
    Name the output image:lipid_3ms_10ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:106|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
    Select the input image:lipid_3ms_30ms_tophat_noSatu
    Name the output image:lipid_3ms_30ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:107|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
    Select the input image:lipid_3ms_50ms_tophat_noSatu
    Name the output image:lipid_3ms_50ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:108|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
    Select the input image:lipid_3ms_75ms_tophat_noSatu
    Name the output image:lipid_3ms_75ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:109|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
    Select the input image:lipid_3ms_100ms_tophat_noSatu
    Name the output image:lipid_3ms_100ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:110|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
    Select the input image:lipid_3ms_200ms_tophat_noSatu
    Name the output image:lipid_3ms_200ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:111|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
    Select the input image:lipid_3ms_300ms_tophat_noSatu
    Name the output image:lipid_3ms_300ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:112|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
    Select the input image:lipid_3ms_1000ms_tophat_noSatu
    Name the output image:lipid_3ms_1000ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:113|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
    Select the input image:lipid_3ms_2000ms_tophat_noSatu
    Name the output image:lipid_3ms_2000ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:114|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
    Select the input image:lipid_3ms_4000ms_tophat_noSatu
    Name the output image:lipid_3ms_4000ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:115|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
    Select the input image:protein_3ms_1ms_tophat_noSatu
    Name the output image:protein_3ms_1ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:116|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
    Select the input image:protein_3ms_5ms_tophat_noSatu
    Name the output image:protein_3ms_5ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:117|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
    Select the input image:protein_3ms_10ms_tophat_noSatu
    Name the output image:protein_3ms_10ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:118|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
    Select the input image:protein_3ms_30ms_tophat_noSatu
    Name the output image:protein_3ms_30ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:119|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
    Select the input image:protein_3ms_50ms_tophat_noSatu
    Name the output image:protein_3ms_50ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:120|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
    Select the input image:protein_3ms_75ms_tophat_noSatu
    Name the output image:protein_3ms_75ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:121|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
    Select the input image:protein_3ms_100ms_tophat_noSatu
    Name the output image:protein_3ms_100ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:122|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
    Select the input image:protein_3ms_200ms_tophat_noSatu
    Name the output image:protein_3ms_200ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:123|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
    Select the input image:protein_3ms_300ms_tophat_noSatu
    Name the output image:protein_3ms_300ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:124|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
    Select the input image:protein_3ms_1000ms_tophat_noSatu
    Name the output image:protein_3ms_1000ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:125|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
    Select the input image:protein_3ms_2000ms_tophat_noSatu
    Name the output image:protein_3ms_2000ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

MaskImage:[module_num:126|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
    Select the input image:protein_3ms_4000ms_tophat_noSatu
    Name the output image:protein_3ms_4000ms_tophat_noSatu_membrane
    Use objects or an image as a mask?:Objects
    Select object for mask:membranes
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    Invert the mask?:No

OverlayOutlines:[module_num:127|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lipid_3ms
    Name the output image:lipid_3ms_maskOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:membrane_outlines
    Select outline color:Red

OverlayOutlines:[module_num:128|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lipid_3ms
    Name the output image:lipid_3ms_maskOverlay_withLiposCenters
    Select outline display mode:Color
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    Width of outlines:3
    Select outlines to display:membrane_outlines
    Select outline color:Red
    Select outlines to display:liposomeCenterOutlines
    Select outline color:Yellow

ApplyThreshold:[module_num:129|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
    Select the input image:lipid_3ms_1ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_1ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:130|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
    Select the input image:lipid_3ms_5ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_5ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:131|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
    Select the input image:lipid_3ms_10ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_10ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:132|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
    Select the input image:lipid_3ms_30ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_30ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:133|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
    Select the input image:lipid_3ms_50ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_50ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:134|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
    Select the input image:lipid_3ms_75ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_75ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:135|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
    Select the input image:lipid_3ms_100ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_100ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:136|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
    Select the input image:lipid_3ms_200ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_200ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:137|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
    Select the input image:lipid_3ms_300ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_300ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:138|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
    Select the input image:lipid_3ms_1000ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_1000ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:139|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
    Select the input image:lipid_3ms_2000ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_2000ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:140|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
    Select the input image:lipid_3ms_4000ms_tophat_noSatu_membrane
    Name the output image:lipid_3ms_4000ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:141|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
    Select the input image:protein_3ms_1ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_1ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:142|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
    Select the input image:protein_3ms_5ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_5ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:143|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
    Select the input image:protein_3ms_10ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_10ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:144|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
    Select the input image:protein_3ms_30ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_30ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:145|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
    Select the input image:protein_3ms_50ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_50ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:146|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
    Select the input image:protein_3ms_75ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_75ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:147|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
    Select the input image:protein_3ms_100ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_100ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:148|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
    Select the input image:protein_3ms_200ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_200ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:149|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
    Select the input image:protein_3ms_300ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_300ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:150|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
    Select the input image:protein_3ms_1000ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_1000ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:151|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
    Select the input image:protein_3ms_2000ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_2000ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
ApplyThreshold:[module_num:152|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
    Select the input image:protein_3ms_4000ms_tophat_noSatu_membrane
    Name the output image:protein_3ms_4000ms_finOutput_bw
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.0
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
GrayToColor:[module_num:153|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_1ms_finOutput_bw
    Name the output image:lipid_3ms_1ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:154|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_5ms_finOutput_bw
    Name the output image:lipid_3ms_5ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:155|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_10ms_finOutput_bw
    Name the output image:lipid_3ms_10ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:156|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_30ms_finOutput_bw
    Name the output image:lipid_3ms_30ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:157|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_50ms_finOutput_bw
    Name the output image:lipid_3ms_50ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:158|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_75ms_finOutput_bw
    Name the output image:lipid_3ms_75ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:159|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_100ms_finOutput_bw
    Name the output image:lipid_3ms_100ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:160|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_200ms_finOutput_bw
    Name the output image:lipid_3ms_200ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:161|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_300ms_finOutput_bw
    Name the output image:lipid_3ms_300ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:162|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_1000ms_finOutput_bw
    Name the output image:lipid_3ms_1000ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:163|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_2000ms_finOutput_bw
    Name the output image:lipid_3ms_2000ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:164|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
    Select a color scheme:RGB
    Select the input image to be colored red:lipid_3ms
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    Select the input image to be colored blue:lipid_3ms_4000ms_finOutput_bw
    Name the output image:lipid_3ms_4000ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:165|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_1ms
    Select the input image to be colored blue:protein_3ms_1ms_finOutput_bw
    Name the output image:protein_3ms_1ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:166|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_5ms
    Select the input image to be colored blue:protein_3ms_5ms_finOutput_bw
    Name the output image:protein_3ms_5ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:167|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_10ms
    Select the input image to be colored blue:protein_3ms_10ms_finOutput_bw
    Name the output image:protein_3ms_10ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:168|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_30ms
    Select the input image to be colored blue:protein_3ms_30ms_finOutput_bw
    Name the output image:protein_3ms_30ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:169|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_50ms
    Select the input image to be colored blue:protein_3ms_50ms_finOutput_bw
    Name the output image:protein_3ms_50ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:170|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_75ms
    Select the input image to be colored blue:protein_3ms_75ms_finOutput_bw
    Name the output image:protein_3ms_75ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:171|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_100ms
    Select the input image to be colored blue:protein_3ms_100ms_finOutput_bw
    Name the output image:protein_3ms_100ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:172|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_200ms
    Select the input image to be colored blue:protein_3ms_200ms_finOutput_bw
    Name the output image:protein_3ms_200ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:173|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_300ms
    Select the input image to be colored blue:protein_3ms_300ms_finOutput_bw
    Name the output image:protein_3ms_300ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:174|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_1000ms
    Select the input image to be colored blue:protein_3ms_1000ms_finOutput_bw
    Name the output image:protein_3ms_1000ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:175|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_2000ms
    Select the input image to be colored blue:protein_3ms_2000ms_finOutput_bw
    Name the output image:protein_3ms_2000ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:176|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
    Select a color scheme:RGB
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    Select the input image to be colored green:protein_4000ms
    Select the input image to be colored blue:lipid_3ms_4000ms_finOutput_bw
    Name the output image:protein_3ms_4000ms_rawVSfinalOutput
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:177|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_1ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_1ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:178|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_1ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_1ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:179|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_1ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_1ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:180|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_5ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_5ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:181|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_5ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_5ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:182|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_5ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_5ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:183|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_10ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_10ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:184|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_10ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_10ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:185|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_10ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_10ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:186|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_30ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_30ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:187|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_30ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_30ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:188|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_30ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_30ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:189|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_50ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_50ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:190|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_50ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_50ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:191|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_50ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_50ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:192|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_75ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_75ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:193|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_75ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_75ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:194|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_75ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_75ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:195|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_100ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_100ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:196|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_100ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_100ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:197|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_100ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_100ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:198|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_200ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_200ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:199|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_200ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_200ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:200|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_200ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_200ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:201|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_300ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_300ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:202|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_300ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_300ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:203|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_300ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_300ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:204|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_1000ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_1000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:205|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_1000ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_1000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:206|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_1000ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_1000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:207|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_2000ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_2000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:208|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_2000ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_2000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:209|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_2000ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_2000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:210|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_4000ms_tophat_noSatu_membrane
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_4000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--membraneGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:211|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
    Select the type of image to save:Image
    Select the image to save:protein_3ms_4000ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_4000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayGFP
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:212|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_4000ms_rawVSfinalOutput
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_4000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--RawFinOverlayCy5
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:213|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:lipid_raw_3ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

SaveImages:[module_num:214|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_maskOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:lipid_raw_3ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--overlay
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

SaveImages:[module_num:215|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_maskOverlay_withLiposCenters
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    Select method for constructing file names:From image filename
    Select image name for file prefix:lipid_raw_3ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--overlayWithCenters
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

SaveImages:[module_num:216|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
    Select the type of image to save:Image
    Select the image to save:lipid_3ms_liposomCenter
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    Select method for constructing file names:From image filename
    Select image name for file prefix:lipid_raw_3ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--liposomeCenters
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

SaveImages:[module_num:217|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
    Select the type of image to save:Image
    Select the image to save:protein_1ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_1ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:218|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
    Select the type of image to save:Image
    Select the image to save:protein_5ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_5ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:219|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
    Select the type of image to save:Image
    Select the image to save:protein_10ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_10ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:220|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
    Select the type of image to save:Image
    Select the image to save:protein_30ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_30ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:221|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
    Select the type of image to save:Image
    Select the image to save:protein_50ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_50ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:222|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
    Select the type of image to save:Image
    Select the image to save:protein_75ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_75ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:223|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
    Select the type of image to save:Image
    Select the image to save:protein_100ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_100ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:224|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
    Select the type of image to save:Image
    Select the image to save:protein_200ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_200ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:225|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
    Select the type of image to save:Image
    Select the image to save:protein_300ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_300ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:226|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
    Select the type of image to save:Image
    Select the image to save:protein_1000ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_1000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:227|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
    Select the type of image to save:Image
    Select the image to save:protein_2000ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_2000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:228|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
    Select the type of image to save:Image
    Select the image to save:protein_4000ms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:protein_raw_4000ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--rawimage
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:229|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
    Select the type of image to save:Image
    Select the image to save:mask_membranes
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    Select method for constructing file names:From image filename
    Select image name for file prefix:lipid_raw_3ms
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:--mask
    Select file format to use:jpeg
    Output file location:Elsewhere...|/g/gavin/projects/Liposome_screen/www/\\g<runPath>--cellprofiler/\\g<wellPath>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

MeasureImageIntensity:[module_num:230|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
    Select the image to measure:lipid_3ms_5ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_5ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_10ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_10ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_30ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_30ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_100ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_100ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_1ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_1ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_50ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_50ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_75ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_75ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_200ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_200ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_300ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_300ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_1000ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_1000ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_2000ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_2000ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:lipid_3ms_4000ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:protein_3ms_4000ms_tophat_noSatu_membrane
    Measure the intensity only from areas enclosed by objects?:No
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
CalculateMath:[module_num:231|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
    Name the output measurement:Ratio_3_1
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_1ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_1ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:232|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
    Name the output measurement:Ratio_3_5
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_5ms_tophat_noSatu_membrane
    Multiply the above operand by:0.2
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_5ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:233|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
    Name the output measurement:Ratio_3_10
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_10ms_tophat_noSatu_membrane
    Multiply the above operand by:0.1
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_10ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:234|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
    Name the output measurement:Ratio_3_30
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_30ms_tophat_noSatu_membrane
    Multiply the above operand by:0.03333333333333333333333333
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_30ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:235|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
    Name the output measurement:Ratio_3_50
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_50ms_tophat_noSatu_membrane
    Multiply the above operand by:0.02
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_50ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:236|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
    Name the output measurement:Ratio_3_75
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_75ms_tophat_noSatu_membrane
    Multiply the above operand by:0.013333333333333333333333333333333
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_75ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:237|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
    Name the output measurement:Ratio_3_100
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_100ms_tophat_noSatu_membrane
    Multiply the above operand by:0.01
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_100ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:238|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
    Name the output measurement:Ratio_3_200
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_200ms_tophat_noSatu_membrane
    Multiply the above operand by:0.005
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_200ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:239|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
    Name the output measurement:Ratio_3_300
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_300ms_tophat_noSatu_membrane
    Multiply the above operand by:0.003333333333333333333333333
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_300ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:240|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
    Name the output measurement:Ratio_3_1000
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_1000ms_tophat_noSatu_membrane
    Multiply the above operand by:0.001
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_1000ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:241|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
    Name the output measurement:Ratio_3_2000
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_2000ms_tophat_noSatu_membrane
    Multiply the above operand by:0.001
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_2000ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:242|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
    Name the output measurement:Ratio_3_4000
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_protein_3ms_4000ms_tophat_noSatu_membrane
    Multiply the above operand by:0.001
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_MeanIntensity_lipid_3ms_4000ms_tophat_noSatu_membrane
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

ExportToSpreadsheet:[module_num:243|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notes:['']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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\g<rootPath>/\\g<runPath>--cellprofiler/\\g<wellPath>
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Count_boundaries,Image|Count_liposomes,Image|Count_membranes,Image|Count_liposomeCenters,Image|ImageQuality_TotalIntensity_protein_raw_75ms,Image|ImageQuality_TotalIntensity_protein_raw_1000ms,Image|ImageQuality_TotalIntensity_protein_raw_100ms,Image|ImageQuality_TotalIntensity_protein_raw_5ms,Image|ImageQuality_TotalIntensity_protein_raw_1ms,Image|ImageQuality_TotalIntensity_protein_raw_200ms,Image|ImageQuality_TotalIntensity_protein_raw_300ms,Image|ImageQuality_TotalIntensity_protein_raw_30ms,Image|ImageQuality_TotalIntensity_protein_raw_50ms,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
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image.csv
    Use the object name for the file name?:No
    Data to export:liposomes
    Combine these object measurements with those of the previous object?:No
    File name:objects.csv
    Use the object name for the file name?:No
    Data to export:liposomeCenters
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:244|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
    Store batch files in default output folder?:No
    Output folder path:/g/gavin/projects/Liposome_screen
    Are the cluster computers running Windows?:No
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    Local root path:/home/vonkova
    Cluster root path:/home/vonkova
