CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11047

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Elsewhere...|/g/almf/software/scripts/python
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):angle
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:im
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    Rescale intensities?:Yes

Morph:[module_num:2|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
    Select the input image:im
    Name the output image:directionOfLines
    Select the operation to perform:directionlines
    Number of times to repeat operation:Once
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    Scale:10

ImageMath:[module_num:3|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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:DirLinesRadians
    Image or measurement?:Image
    Select the first image:directionOfLines
    Multiply the first image by:0.0349
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:im
    Name the primary objects to be identified:MT
    Typical diameter of objects, in pixel units (Min,Max):3,4000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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    Handling of objects if excessive number of objects identified:Continue
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
ConvertObjectsToImage:[module_num:5|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
    Select the input objects:MT
    Name the output image:MTBW
    Select the color type:Binary (black & white)
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
MaskImage:[module_num:6|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
    Select the input image:DirLinesRadians
    Name the output image:DirLinesRadiansMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:MT
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    Invert the mask?:No

Smooth:[module_num:7|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
    Select the input image:DirLinesRadiansMasked
    Name the output image:AngularVariance
    Select smoothing method:Angular Variance Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:11
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
ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:MaskBlue
    Multiply the first image by:0.005
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    Image or measurement?:Image
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
Tile:[module_num:9|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
    Select an input image:im
    Name the output image:TiledImage
    Tile within cycles or across cycles?:Within cycles
    Number of rows in final tiled image:8
    Number of columns in final tiled image:12
    Begin tiling in which corner of the final image?:top left
    Begin tiling across a row, or down a column?:row
    Tile in meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:ImageAfterMath
